PsychoPy2experiment version="2026.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '1', 'day': '1', 'Global clock format': 'None'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = DecisionLab
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
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
  Routine TaskStructure
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    TextComponent text_2
      letterHeight = 0.04
      pos = (0, .2)
      startVal [time (s)] = 0.0
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      text:
        Task Structure

        In this task, you'll see different fruits as you play.

        Each fruit can either give you points or take points away.

        You'll earn points when the number is positive (+), and lose points when it's negative (-).
    TextComponent text_19
      color = -1.0000, 0.0039, -1.0000
      letterHeight = 0.15
      pos = (-.2, -.2)
      startVal [time (s)] = 0.0
      text = +50
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    TextComponent text_21
      color = 0.5294, -1.0000, -1.0000
      letterHeight = 0.15
      pos = (.2, -.2)
      startVal [time (s)] = 0.0
      text = -50
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    KeyboardComponent key_resp_16
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_28
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Press C to continue.
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  Routine yourGoal
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    TextComponent text_3
      letterHeight = 0.035
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        Your Goal

        Right after a fruit is shown, you will be asked to predict how many points it will provide this time.

        Do your best to be as accurate as you can.

        Immediately after your prediction, you will be shown how many points it actually provided this time.

        Press C to continue.
    SliderComponent slider_2
      font = Noto Sans
      forceEndRoutine = False
      granularity = 5
      initVal = 0
      labels = (-100, -80, -60, -40, -20, 0, 20, 40, 60, 80, 100)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1, 0.075)
      startVal [time (s)] = 0
      styles = slider
      ticks = (-100, -80, -60, -40, -20, 0, 20, 40, 60, 80, 100)
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    TextComponent text_22
      letterHeight = 0.055
      pos = (0, -0.08)
      startVal [time (s)] = 0.0
      text = "How many points do you expect to receive from this fruit?"
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    KeyboardComponent key_resp_18
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine startTask
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random
        import sys
        import csv

        # Path joining function (avoid os import for PsychoPy compatibility)
        def _join_path(*parts):
            """Join path parts using '/' separator (works on both Windows and Unix)"""
            return '/'.join(str(p).strip('/') for p in parts if p)

        # Add current directory to path to import data_logging
        # PsychoPy runs from the experiment directory, so data_logging.py should be in the same directory
        # NO os import - completely avoid it for PsychoPy compatibility (doesn't work online/Pavlovia)
        try:
            # Try to import data_logging from the experiment directory
            # This should work if data_logging.py is in the same directory as the .psyexp file
            from data_logging import initialize_logger
        except ImportError:
            print("WARNING: Could not import data_logging module. Data logging will be disabled.")
            print("Make sure data_logging.py is in the same directory as your .psyexp file.")
            # Create a dummy logger
            class DummyLogger:
                def __init__(self, *args, **kwargs): pass
                def start_trial(self, *args): pass
                def log_keypress(self, *args): pass
                def log_learning_trial(self, *args, **kwargs): pass
                def log_decision_trial(self, *args, **kwargs): pass
                def save_learning_data(self, *args, **kwargs): pass
                def save_decision_data(self, *args, **kwargs): pass
            def initialize_logger(*args, **kwargs):
                return DummyLogger()

        # Initialize data logger
        # Get session_number and day from PsychoPy's expInfo dialog
        # PsychoPy Builder requires 'participant' field - we'll use that as session_number
        # Also need 'day' field (1 or 2)

        # Try to get from expInfo (set in PsychoPy Builder dialog)
        try:
            # PsychoPy stores dialog info in thisExp.info or expInfo
            exp_info_dict = None
            if 'thisExp' in locals() and hasattr(thisExp, 'info'):
                exp_info_dict = thisExp.info
            elif 'expInfo' in locals():
                exp_info_dict = expInfo

            if exp_info_dict:
                # Get session_number from 'session' field (user's actual field name)
                # Fallback to 'session_number' or 'participant' if 'session' not found
                if 'session' in exp_info_dict:
                    session_str = str(exp_info_dict['session']).strip()
                    # Remove any 'sub-' prefix if present
                    if session_str.startswith('sub-'):
                        session_str = session_str[4:]
                    # Try to convert to integer
                    try:
                        SESSION_NUMBER = int(session_str)
                    except ValueError:
                        # If not a number, use hash of string to get consistent number
                        SESSION_NUMBER = abs(hash(session_str)) % 10000
                        print(f"WARNING: session '{exp_info_dict['session']}' is not a number, using hash: {SESSION_NUMBER}")
                elif 'session_number' in exp_info_dict:
                    SESSION_NUMBER = int(exp_info_dict['session_number'])
                elif 'participant' in exp_info_dict:
                    # Use participant field as fallback (but user said to ignore it)
                    participant_str = str(exp_info_dict['participant']).strip()
                    if participant_str.lower() != 'ignore':
                        # Only use if not set to 'ignore'
                        if participant_str.startswith('sub-'):
                            participant_str = participant_str[4:]
                        try:
                            SESSION_NUMBER = int(participant_str)
                        except ValueError:
                            SESSION_NUMBER = abs(hash(participant_str)) % 10000
                            print(f"WARNING: participant '{exp_info_dict['participant']}' is not a number, using hash: {SESSION_NUMBER}")
                    else:
                        SESSION_NUMBER = 1
                        print(f"WARNING: 'session' field not found and 'participant' is set to 'ignore', using default: {SESSION_NUMBER}")
                else:
                    SESSION_NUMBER = 1
                    print(f"WARNING: 'session' field not found in dialog, using default: {SESSION_NUMBER}")

                # Get day
                if 'day' in exp_info_dict:
                    DAY = int(exp_info_dict['day'])
                else:
                    DAY = 1
                    print(f"WARNING: 'day' not found in dialog, using default: {DAY}")

                print(f"Got session_number={SESSION_NUMBER} (from 'session' field) and day={DAY} from PsychoPy dialog")
            else:
                # No dialog info available - use defaults
                SESSION_NUMBER = 1
                DAY = 1
                print(f"WARNING: Could not get session_number/day from dialog, using defaults: session_number={SESSION_NUMBER}, day={DAY}")
                print(f"  Make sure to set 'participant' (or 'session_number') and 'day' fields in PsychoPy Builder > Experiment Settings > Basic > Experiment info")
        except Exception as e:
            # Fallback to defaults if anything goes wrong
            SESSION_NUMBER = 1
            DAY = 1
            print(f"WARNING: Error getting session_number/day from dialog: {e}")
            print(f"  Using defaults: session_number={SESSION_NUMBER}, day={DAY}")
            print(f"  Make sure to set 'participant' (or 'session_number') and 'day' fields in PsychoPy Builder > Experiment Settings > Basic > Experiment info")

        # Initialize data logger with session_number and day
        data_logger = initialize_logger(session_number=SESSION_NUMBER, day=DAY, experiment_dir="data")
        globals()['data_logger'] = data_logger
        print(f"Data logger initialized: session_number={SESSION_NUMBER}, day={DAY}")

        # Load timing configuration from text file
        # Use simple defaults, config loading happens in individual routines to avoid os conflicts
        TRIAL_TIMEOUT_SECONDS = 8.0
        CROSSHAIR_RANDOM_VALUES = [2, 3, 4]
        TIMEOUT_SCREEN_DURATION = 1.5  # Timeout screen duration (same across all blocks)
        ACTUAL_POINTS_DURATION = 2.0
        DECISION_TIMEOUT_DURATION = 2.0  # Maximum time for decision making (seconds)

        # Store decision timeout in globals for use in decision making routines
        globals()['DECISION_TIMEOUT_DURATION'] = DECISION_TIMEOUT_DURATION
        globals()['TIMEOUT_SCREEN_DURATION'] = TIMEOUT_SCREEN_DURATION

        # Try to load from config file (will be loaded in routines that need it)
        print(f"Using timing config: timeout={TRIAL_TIMEOUT_SECONDS}s, actualPoints={ACTUAL_POINTS_DURATION}s, decisionTimeout={DECISION_TIMEOUT_DURATION}s")

        image_dir = "images/"
        all_fruits = ["apple.png", "banana.png", "strawberry.png", "kiwi.png", "pear.png", "grapes.png"]

        # Create fruit name mapping (remove .png extension)
        fruit_names = [f.replace('.png', '') for f in all_fruits]

        # Create numerical ID mapping (1-6 for each fruit)
        # This will be used for decision making phase
        fruit_to_num = {}
        num_to_fruit = {}
        for i, fruit in enumerate(fruit_names, 1):
            fruit_to_num[fruit] = i
            num_to_fruit[i] = fruit

        # Store globally for use in decision making
        globals()['fruit_to_num'] = fruit_to_num
        globals()['num_to_fruit'] = num_to_fruit

        # Day 2 counterbalancing: Load Day 1 data if day == 2
        if DAY == 2:
            print(f"\n{'='*60}")
            print(f"DAY 2: Loading Day 1 data for counterbalancing")
            print(f"{'='*60}")

            # Load Day 1 CSV files to get fruit assignments and block order
            # File pattern: sub-{session:03d}_day-1_block-{1,2}_learning_{1,2}_{block_name}.csv
            session_str = f"{SESSION_NUMBER:03d}"
            day1_gain_fruits = []
            day1_loss_fruits = []
            day1_gain_baselines = {}
            day1_loss_baselines = {}
            day1_first_block = None

            # Try to load both block files from Day 1
            # Search in multiple locations since Day 1 and Day 2 might be in different folders
            # Priority order:
            # 1. Current experiment folder: data/sub-1/ (relative to Day 2 experiment)
            # 2. Parent folder: ../data/sub-1/ (if Day 1 and Day 2 are siblings)
            # 3. Common Downloads location: ../../data/sub-1/ (if both in Downloads)
            # 4. Absolute path from expInfo if provided (day1_data_path field)

            # Get optional Day 1 data path from expInfo (if user specified it)
            day1_data_path = None
            try:
                exp_info_dict = None
                if 'thisExp' in locals() and hasattr(thisExp, 'info'):
                    exp_info_dict = thisExp.info
                elif 'expInfo' in locals():
                    exp_info_dict = expInfo
                if exp_info_dict and 'day1_data_path' in exp_info_dict:
                    day1_data_path = str(exp_info_dict['day1_data_path']).strip()
                    if day1_data_path:
                        print(f"Using custom Day 1 data path from dialog: {day1_data_path}")
            except:
                pass

            # List of paths to search (in priority order)
            search_paths = []
            if day1_data_path:
                # User-specified path takes highest priority
                search_paths.append(day1_data_path)
            # Add relative paths
            search_paths.extend([
                _join_path("data", "sub-1"),  # Current folder
                _join_path("..", "data", "sub-1"),  # Parent folder (sibling experiments)
                _join_path("../..", "data", "sub-1"),  # Two levels up (common Downloads folder)
                _join_path("..", "..", "data", "sub-1"),  # Alternative two levels up
            ])

            print(f"Searching for Day 1 data files in {len(search_paths)} locations:")
            for i, path in enumerate(search_paths, 1):
                print(f"  {i}. {path}")

            # Try to load both block files from Day 1
            for block_num in [1, 2]:
                file_found = False
                for block_name in ["rewards", "gain", "punishment", "loss"]:
                    filename = f"sub-{session_str}_day-1_block-{block_num}_learning_{block_num}_{block_name}.csv"

                    # Try each search path
                    for search_path in search_paths:
                        filepath = _join_path(search_path, filename)

                        try:
                            # Try to read the CSV file
                            with open(filepath, 'r', encoding='utf-8') as f:
                                reader = csv.DictReader(f)
                                rows = list(reader)

                                if rows:
                                    # Determine block type from block_name or first row
                                    first_row = rows[0]
                                    block_type = first_row.get('block_name', block_name).lower()

                                    # Track which block came first
                                    if block_num == 1:
                                        if block_type in ["rewards", "gain"]:
                                            day1_first_block = "gain"
                                        elif block_type in ["punishment", "loss"]:
                                            day1_first_block = "loss"

                                    # Extract fruits and baselines from this block
                                    # Collect all unique fruits and their baselines (use first occurrence for baseline)
                                    for row in rows:
                                        fruit_name = row.get('stimulus_identity', '').strip()
                                        if not fruit_name:
                                            continue

                                        # Add .png extension if not present
                                        if not fruit_name.endswith('.png'):
                                            fruit_name = fruit_name + '.png'

                                        baseline = float(row.get('stimulus_average_points', 0))

                                        if block_type in ["rewards", "gain"]:
                                            if fruit_name not in day1_gain_fruits:
                                                day1_gain_fruits.append(fruit_name)
                                                day1_gain_baselines[fruit_name] = baseline
                                        elif block_type in ["punishment", "loss"]:
                                            if fruit_name not in day1_loss_fruits:
                                                day1_loss_fruits.append(fruit_name)
                                                day1_loss_baselines[fruit_name] = baseline

                                    print(f"✓ Loaded Day 1 Block {block_num} ({block_type}): {len(rows)} trials from {filepath}")
                                    file_found = True
                                    break  # Found the file, move to next block
                        except (FileNotFoundError, IOError, OSError) as e:
                            # File doesn't exist at this path - try next path
                            continue

                    if file_found:
                        break  # Found the file for this block, move to next block

            # Verify we got complete data (need 3 gain fruits and 3 loss fruits)
            gain_count = len(day1_gain_fruits) if day1_gain_fruits else 0
            loss_count = len(day1_loss_fruits) if day1_loss_fruits else 0
            print(f"DEBUG: Validation check - gain_fruits count: {gain_count}, loss_fruits count: {loss_count}")

            # Check if we have complete data (exactly 3 fruits in each category)
            has_complete_data = (gain_count == 3 and loss_count == 3)

            if not has_complete_data:
                print(f"\n{'='*60}")
                print(f"ERROR: Could not load complete Day 1 data for session {SESSION_NUMBER}")
                print(f"{'='*60}")
                print(f"  Found {len(day1_gain_fruits)} gain fruits: {day1_gain_fruits}")
                print(f"  Found {len(day1_loss_fruits)} loss fruits: {day1_loss_fruits}")
                print(f"  Expected 3 of each (need complete Day 1 data)")
                print(f"  Expected files: sub-{session_str}_day-1_block-1_learning_*.csv and block-2_learning_*.csv")
                print(f"  Searched in {len(search_paths)} locations:")
                for i, path in enumerate(search_paths, 1):
                    print(f"    {i}. {path}")
                print(f"\n  Day 2 REQUIRES Day 1 data to run.")
                print(f"  Please ensure:")
                print(f"    1. Day 1 experiment completed successfully")
                print(f"    2. Day 1 CSV files are in data/sub-1/ folder")
                print(f"    3. Session number matches Day 1 (session={SESSION_NUMBER})")
                print(f"{'='*60}\n")

                # Exit the experiment - Day 2 cannot run without Day 1 data
                print("EXITING EXPERIMENT: Day 2 requires Day 1 data.")
                if 'thisExp' in locals():
                    thisExp.abort()  # Abort the experiment
                # Also try to close the window if possible
                try:
                    if 'win' in locals():
                        win.close()
                except:
                    pass
                # Exit Python
                import sys
                sys.exit(1)
            else:
                print(f"Day 1 data loaded successfully:")
                print(f"  Gain fruits: {day1_gain_fruits} with baselines: {[day1_gain_baselines[f] for f in day1_gain_fruits]}")
                print(f"  Loss fruits: {day1_loss_fruits} with baselines: {[day1_loss_baselines[f] for f in day1_loss_fruits]}")
                print(f"  First block: {day1_first_block}")

                # Counterbalance Day 2 based on session ID (participant assignment):
                # Row 1 (session 1, 5, 9, 13, ...): Day 1 = gain/loss, Day 2 = gain/loss
                # Row 2 (session 2, 6, 10, 14, ...): Day 1 = gain/loss, Day 2 = loss/gain
                # Row 3 (session 3, 7, 11, 15, ...): Day 1 = loss/gain, Day 2 = gain/loss
                # Row 4 (session 4, 8, 12, 16, ...): Day 1 = loss/gain, Day 2 = loss/gain
                # Determine row: row = ((session_id - 1) % 4) + 1
                row = ((SESSION_NUMBER - 1) % 4) + 1
                print(f"  Participant row assignment: Row {row} (session {SESSION_NUMBER})")

                # Day 2 first block determined directly by row:
                # Row 1 or 3: gain first
                # Row 2 or 4: loss first
                if row == 1 or row == 3:
                    # Row 1 or 3: gain first
                    day2_first_block = "gain"
                    print(f"  Row {row}: Day 2 first block = gain")
                else:  # row == 2 or row == 4
                    # Row 2 or 4: loss first
                    day2_first_block = "loss"
                    print(f"  Row {row}: Day 2 first block = loss")

                # Fruits stay in the same category (gains stay gains, losses stay losses)
                # Only shift values: 20→50, 50→80, 80→20 (and -20→-50, -50→-80, -80→-20)
                # This is a mapping, not a circular shift

                # Get Day 1 baselines in order
                day1_gain_vals = [day1_gain_baselines[f] for f in day1_gain_fruits]
                day1_loss_vals = [day1_loss_baselines[f] for f in day1_loss_fruits]

                # Value mapping function: shifts magnitude only (20→50, 50→80, 80→20)
                # Fruits stay in the same category (gains stay gains, losses stay losses)
                # Only the values shift within each category
                def shift_value(val):
                    """Shift value: 20→50, 50→80, 80→20 (preserves sign)"""
                    abs_val = abs(val)
                    if abs_val == 20:
                        shifted = 50
                    elif abs_val == 50:
                        shifted = 80
                    elif abs_val == 80:
                        shifted = 20
                    else:
                        # Fallback: return original value if not in expected set
                        print(f"WARNING: Unexpected value {val} in Day 2 shift, returning original")
                        return val

                    # Preserve the sign (positive stays positive, negative stays negative)
                    return shifted if val > 0 else -shifted

                # Apply value shift to Day 1 values
                # Day 1 gains stay gains, just shift values: apple: 20→50, banana: 50→80, strawberry: 80→20
                day2_gain_vals = [shift_value(val) for val in day1_gain_vals]
                # Day 1 losses stay losses, just shift values: kiwi: -20→-50, pear: -50→-80, grapes: -80→-20
                day2_loss_vals = [shift_value(val) for val in day1_loss_vals]

                print(f"DEBUG: Day 1 gain values {day1_gain_vals} → Day 2 gain values {day2_gain_vals}")
                print(f"DEBUG: Day 1 loss values {day1_loss_vals} → Day 2 loss values {day2_loss_vals}")

                # Assign fruits: Day 1 gains stay gains, Day 1 losses stay losses (same fruits, shifted values)
                gain_fruits = day1_gain_fruits.copy()
                loss_fruits = day1_loss_fruits.copy()

                # Create baseline lists with shifted values (matching fruit order)
                gain_baselines = day2_gain_vals
                loss_baselines = day2_loss_vals

                print(f"Day 2 assignments (same fruits, shifted values):")
                print(f"  Gain fruits: {gain_fruits} with baselines: {gain_baselines}")
                print(f"  Loss fruits: {loss_fruits} with baselines: {loss_baselines}")
                print(f"{'='*60}\n")

                # Store day2_first_block for use in block order determination
                globals()['day2_first_block'] = day2_first_block
                print(f"DEBUG: Stored day2_first_block = '{day2_first_block}' in globals")
        else:
            # Day 1: Random assignment
            random.shuffle(all_fruits)
            gain_fruits = all_fruits[:3]
            loss_fruits = all_fruits[3:]

            # Randomly assign baseline values to each fruit
            gain_baselines = random.sample([20, 50, 80], 3)
            loss_baselines = random.sample([-20, -50, -80], 3)

            print(f"Day 1: Random assignment")
            print(f"Gain fruits: {gain_fruits} with baselines: {gain_baselines}")
            print(f"Loss fruits: {loss_fruits} with baselines: {loss_baselines}")

        def make_values(base):
            # Create 10 unique values: [base]*4 + [base+5]*2 + [base-5]*2 + [base+10, base-10]
            values = [base]*4 + [base+5]*2 + [base-5]*2 + [base+10, base-10]
            # Shuffle them once
            random.shuffle(values)
            # Double the list to get 20 presentations per fruit
            return values * 2

        gain_block, loss_block = [], []

        for fruit, base in zip(gain_fruits, gain_baselines):
            values = make_values(base)  # This gives 20 values per fruit
            for val in values:
                gain_block.append({"block":"gain", "fruit":image_dir+fruit, "baseline":base, "true_value":val})

        for fruit, base in zip(loss_fruits, loss_baselines):
            values = make_values(base)  # This gives 20 values per fruit
            for val in values:
                loss_block.append({"block":"loss", "fruit":image_dir+fruit, "baseline":base, "true_value":val})

        # Shuffle each block to randomize trial order
        random.shuffle(gain_block)
        random.shuffle(loss_block)

        # Trial count is determined by loop nReps in PsychoPy Builder
        # The loop nReps should be set to total number of trials (e.g., 60)
        # We'll use the first nReps/2 trials from each block
        # Full blocks have 60 trials each (3 fruits × 20 presentations)
        # For 60 total trials: use first 30 from gain_block and first 30 from loss_block

        # Don't limit here - the loop nReps will control how many trials run
        # We'll use all available trials, and the loop will stop when nReps is reached
        print(f"Full gain block: {len(gain_block)} trials available")
        print(f"Full loss block: {len(loss_block)} trials available")
        print(f"NOTE: Set loop nReps to total trials (e.g., 60 for 30 gain + 30 loss)")
        print(f"      The code will use first nReps/2 from each block")

        # Decide which block comes first
        if DAY == 2:
            # Use the counterbalanced block order from Day 2 setup
            day2_first_block = globals().get('day2_first_block', None)
            print(f"DEBUG: Retrieved day2_first_block from globals = '{day2_first_block}'")
            print(f"DEBUG: SESSION_NUMBER = {SESSION_NUMBER}, DAY = {DAY}")

            if day2_first_block:
                first_block = day2_first_block
                second_block = "loss" if day2_first_block == "gain" else "gain"
                print(f"Day 2 block order: {first_block} first, then {second_block} (counterbalanced by session ID)")
                print(f"DEBUG: first_block = '{first_block}', second_block = '{second_block}'")
            else:
                # Fallback if day2_first_block wasn't set - this should not happen!
                print(f"ERROR: day2_first_block is None! This should not happen for Day 2.")
                print(f"ERROR: Falling back to random assignment (this is wrong!)")
                # Recalculate based on session ID as fallback
                row = ((SESSION_NUMBER - 1) % 4) + 1
                if row == 1 or row == 3:
                    first_block = "gain"
                    second_block = "loss"
                else:
                    first_block = "loss"
                    second_block = "gain"
                print(f"ERROR FALLBACK: Row {row}, Day 2 block order: {first_block} first, then {second_block}")
        else:
            # Day 1: Counterbalance block order based on session ID (participant assignment):
            # Row 1 (session 1, 5, 9, 13, ...): Day 1 = gain/loss
            # Row 2 (session 2, 6, 10, 14, ...): Day 1 = gain/loss
            # Row 3 (session 3, 7, 11, 15, ...): Day 1 = loss/gain
            # Row 4 (session 4, 8, 12, 16, ...): Day 1 = loss/gain
            # Determine row: row = ((session_id - 1) % 4) + 1
            row = ((SESSION_NUMBER - 1) % 4) + 1
            print(f"  Participant row assignment: Row {row} (session {SESSION_NUMBER})")

            if row == 1 or row == 2:
                # Row 1 or 2: gain first
                first_block = "gain"
                second_block = "loss"
                print(f"  Row {row}: Day 1 block order = gain/loss")
            else:  # row == 3 or row == 4
                # Row 3 or 4: loss first
                first_block = "loss"
                second_block = "gain"
                print(f"  Row {row}: Day 1 block order = loss/gain")

            print(f"Day 1 block order: {first_block} first, then {second_block} (counterbalanced by session ID)")

        # Note: Trial count per block will be determined by loop nReps / 2
        # For now, we'll use all available trials and let the loop control it
        # The combined block will be truncated by the loop's nReps

        print(f"Block order: {first_block} first, then {second_block}")
        print(f"DEBUG: Creating combined block with first_block='{first_block}', second_block='{second_block}'")
        print(f"DEBUG: gain_block has {len(gain_block)} trials, loss_block has {len(loss_block)} trials")
        if len(gain_block) > 0:
            print(f"DEBUG: First gain trial: {gain_block[0].get('fruit', 'unknown')}, block type: {gain_block[0].get('block', 'unknown')}")
        if len(loss_block) > 0:
            print(f"DEBUG: First loss trial: {loss_block[0].get('fruit', 'unknown')}, block type: {loss_block[0].get('block', 'unknown')}")

        # Create combined block list in the correct order
        # IMPORTANT: This ensures all trials from first block appear first, then all from second block
        # We'll create the full combined block, but trialBeginRoutine will limit based on nReps
        combined_learning_block = []
        if first_block == "gain":
            # First block: all gain trials, then all loss trials
            combined_learning_block = gain_block.copy() + loss_block.copy()
            print(f"Combined block: {len(gain_block)} gains + {len(loss_block)} losses = {len(combined_learning_block)} total")
            print(f"DEBUG: First {len(gain_block)} trials are GAIN, next {len(loss_block)} trials are LOSS")
            if len(combined_learning_block) > 0:
                first_trial = combined_learning_block[0]
                print(f"DEBUG: First trial - fruit: {first_trial.get('fruit', 'unknown')}, block type: {first_trial.get('block', 'unknown')}, expected: 'gain'")
                if first_trial.get('block', 'unknown') != 'gain':
                    print(f"ERROR: First trial block type is '{first_trial.get('block', 'unknown')}' but should be 'gain'!")
        else:
            # First block: all loss trials, then all gain trials
            combined_learning_block = loss_block.copy() + gain_block.copy()
            print(f"Combined block: {len(loss_block)} losses + {len(gain_block)} gains = {len(combined_learning_block)} total")
            print(f"DEBUG: First {len(loss_block)} trials are LOSS, next {len(gain_block)} trials are GAIN")
            if len(combined_learning_block) > 0:
                first_trial = combined_learning_block[0]
                print(f"DEBUG: First trial - fruit: {first_trial.get('fruit', 'unknown')}, block type: {first_trial.get('block', 'unknown')}, expected: 'loss'")
                if first_trial.get('block', 'unknown') != 'loss':
                    print(f"ERROR: First trial block type is '{first_trial.get('block', 'unknown')}' but should be 'loss'!")

        # Explicitly store in globals to ensure it's accessible in other routines
        globals()['combined_learning_block'] = combined_learning_block
        globals()['first_block'] = first_block  # Store for debugging
        globals()['second_block'] = second_block  # Store for debugging

        # Final verification
        print(f"DEBUG FINAL: Stored first_block='{first_block}', second_block='{second_block}' in globals")
        print(f"DEBUG FINAL: Combined block has {len(combined_learning_block)} trials")
        if len(combined_learning_block) > 0:
            actual_first = combined_learning_block[0].get('block', 'unknown')
            print(f"DEBUG FINAL: Actual first trial block type = '{actual_first}', expected = '{first_block}'")
            if actual_first != first_block:
                print(f"ERROR: MISMATCH! First trial is '{actual_first}' but should be '{first_block}'!")
        globals()['gain_block'] = gain_block
        globals()['loss_block'] = loss_block

        learning_block_index = -1
        # Store in globals to ensure it persists
        globals()['learning_block_index'] = learning_block_index
        show_block_transition = False  # Flag to trigger transition screen between blocks
        globals()['show_block_transition'] = show_block_transition
        ready_for_block2_setup = False  # Flag to indicate block transition completed, ready for block 2 setup
        globals()['ready_for_block2_setup'] = ready_for_block2_setup
        ready_for_scanner_sync_block2 = False  # Flag to indicate taskStartSoonBlock2 completed, ready for scanner sync
        globals()['ready_for_scanner_sync_block2'] = ready_for_scanner_sync_block2
        block2_setup_complete = False  # Flag to indicate block 2 setup (taskStartSoon + scannerSync) has already been done
        globals()['block2_setup_complete'] = block2_setup_complete
        crosshair2Block2_actually_ran = False  # Flag to track if crosshair2Block2 actually ran (not skipped)
        globals()['crosshair2Block2_actually_ran'] = crosshair2Block2_actually_ran
        block1_scanner_sync_complete = False  # Flag to indicate Block 1 scanner sync has already been completed
        globals()['block1_scanner_sync_complete'] = block1_scanner_sync_complete
        print(f"Combined learning block has {len(combined_learning_block)} trials")

        gain_index = -1
        loss_index = -1
        fruitFile = image_dir + "blank.png"
        trueVal = 0
        trueValStr = ""
        blockType = ""
        baselineR = 0


        print("Gain trials:", len(gain_block), "| Loss trials:", len(loss_block))

        # --- Initialize decision placeholders (prevents undefined variable error) ---
        leftFile = "images/blank.png"
        rightFile = "images/blank.png"

        # --- Decision pairs setup ---
        # Create fruit values dictionary based on randomized assignments
        fruit_values = {}
        for fruit, baseline in zip(gain_fruits, gain_baselines):
            fruit_values[image_dir + fruit] = baseline
        for fruit, baseline in zip(loss_fruits, loss_baselines):
            fruit_values[image_dir + fruit] = baseline

        # Create all unique pairs (15 pairs from 6 fruits: C(6,2) = 15)
        all_fruit_paths = [image_dir + fruit for fruit in all_fruits]
        decision_pairs = []
        for i in range(len(all_fruit_paths)):
            for j in range(i + 1, len(all_fruit_paths)):
                decision_pairs.append((all_fruit_paths[i], all_fruit_paths[j]))

        print(f"Created {len(decision_pairs)} unique pairs")

        # Build list of decision trials with counterbalancing (4 repetitions per pair = 60 total)
        # For each pair (A,B), create 4 reps so that:
        # - Each fruit appears 2x on left and 2x on right (final choice display)
        # - Each fruit appears 2x as the first stimulus and 2x as the second stimulus
        # Rep template:
        # rep 1: left=A right=B, first=A (left)
        # rep 2: left=A right=B, first=B (right)
        # rep 3: left=B right=A, first=A (right)
        # rep 4: left=B right=A, first=B (left)

        decision_block = []
        for fruit1, fruit2 in decision_pairs:
            val1 = fruit_values[fruit1]
            val2 = fruit_values[fruit2]

            # rep 1
            decision_block.append({
                "leftFruit": fruit1,
                "rightFruit": fruit2,
                "firstFruit": fruit1,
                "firstSide": "left",
                "secondFruit": fruit2,
                "secondSide": "right",
                "leftVal": val1,
                "rightVal": val2,
                "correct": "left" if val1 > val2 else "right",
            })

            # rep 2
            decision_block.append({
                "leftFruit": fruit1,
                "rightFruit": fruit2,
                "firstFruit": fruit2,
                "firstSide": "right",
                "secondFruit": fruit1,
                "secondSide": "left",
                "leftVal": val1,
                "rightVal": val2,
                "correct": "left" if val1 > val2 else "right",
            })

            # rep 3
            decision_block.append({
                "leftFruit": fruit2,
                "rightFruit": fruit1,
                "firstFruit": fruit1,
                "firstSide": "right",
                "secondFruit": fruit2,
                "secondSide": "left",
                "leftVal": val2,
                "rightVal": val1,
                "correct": "left" if val2 > val1 else "right",
            })

            # rep 4
            decision_block.append({
                "leftFruit": fruit2,
                "rightFruit": fruit1,
                "firstFruit": fruit2,
                "firstSide": "left",
                "secondFruit": fruit1,
                "secondSide": "right",
                "leftVal": val2,
                "rightVal": val1,
                "correct": "left" if val2 > val1 else "right",
            })

        # Verify counterbalancing: should have 30 left-first and 30 right-first
        left_first_count = sum(1 for trial in decision_block if trial["firstSide"] == "left")
        right_first_count = sum(1 for trial in decision_block if trial["firstSide"] == "right")
        print(f"Counterbalancing check (before shuffle): {left_first_count} left-first, {right_first_count} right-first (should be 30 each)")

        # Shuffle all trials to randomize order
        random.shuffle(decision_block)

        # Verify randomization: show first 10 trials to confirm pattern
        print("Randomization check (first 10 trials after shuffle):")
        for i in range(min(10, len(decision_block))):
            trial = decision_block[i]
            first_side = trial["firstSide"]
            first_fruit = trial["firstFruit"].replace("images/", "").replace(".png", "")
            second_fruit = trial["secondFruit"].replace("images/", "").replace(".png", "")
            left_fruit = trial["leftFruit"].replace("images/", "").replace(".png", "")
            right_fruit = trial["rightFruit"].replace("images/", "").replace(".png", "")
            print(f"  Trial {i+1}: First {first_fruit} on {first_side}, then {second_fruit} on {trial['secondSide']}, final: {left_fruit} left, {right_fruit} right")

        # Final verification after shuffle
        left_first_count_after = sum(1 for trial in decision_block if trial["firstSide"] == "left")
        right_first_count_after = sum(1 for trial in decision_block if trial["firstSide"] == "right")
        print(f"Counterbalancing check (after shuffle): {left_first_count_after} left-first, {right_first_count_after} right-first (should still be 30 each)")

        decision_index = 0
        # Store in globals to ensure it persists across routines
        globals()['decision_index'] = decision_index
        globals()['decision_block'] = decision_block
        print(f"Decision trials: {len(decision_block)} (should be 60)")

        # --- Create practice block for Block 1 (3 practice trials) ---
        # Practice trials use static images: dog, cat, rabbit (always in this order)
        # These are shorter trials to familiarize participants with the task
        # Practice trials should match the first block type (gain or loss)
        practice_block = []
        # Static practice images (always the same)
        practice_fruit_names = ["dog.png", "cat.png", "rabbit.png"]

        # Determine practice values based on first_block type
        # If first_block is "gain", all values should be positive
        # If first_block is "loss", all values should be negative
        if first_block == "gain":
            # Positive values for reward block: 30, 50, 10
            practice_values = [30, 50, 10]  # All positive
            practice_baselines = [50, 50, 50]  # All positive baselines
            practice_block_type = "gain"
        else:
            # Negative values for punishment block: -30, -50, -10
            practice_values = [-30, -50, -10]  # All negative
            practice_baselines = [-50, -50, -50]  # All negative baselines
            practice_block_type = "loss"

        for i, image_name in enumerate(practice_fruit_names):
            baseline = practice_baselines[i]
            practice_value = practice_values[i]

            # Create practice trial with static value matching first block type
            practice_block.append({
                "block": practice_block_type,
                "fruit": image_dir + image_name,
                "baseline": baseline,
                "true_value": practice_value
            })
            print(f"Practice trial {i+1} (Block 1, {first_block}): {image_name} with value {practice_value:+d} (baseline: {baseline:+d})")

        # Do NOT shuffle practice trials - keep them in order: dog, cat, rabbit

        practice_block_index = -1
        # Store in globals
        globals()['practice_block'] = practice_block
        globals()['practice_block_index'] = practice_block_index
        print(f"Practice learning trials for Block 1 ({first_block}): {len(practice_block)} (3 trials)")

        # --- Create practice decision block (3 practice trials) ---
        # Practice decision trials with dollar amounts: $5/$1, $10/$1, $10/$5
        # Structure matches decision-making practice run:
        # Trial 1: $5 left (2s), crosshair (1s), $1 right (2s), crosshair (1s), both (2s), crosshair (2s)
        # Trial 2: $10 right (2s), crosshair (1s), $1 left (2s), crosshair (1s), both (2s), crosshair (2s)
        # Trial 3: $10 left (2s), crosshair (1s), $5 right (2s), crosshair (1s), both (2s), crosshair (2s)
        practice_decision_block = []

        # Practice dollar values
        practice_dollar_values = {
            "$5": 5,
            "$1": 1,
            "$10": 10
        }

        # Practice decision trials (3 trials with specific structure):
        # Trial 1: $5 left, $1 right (correct: left, $5 > $1)
        # Trial 2: $1 left, $10 right (correct: right, $10 > $1)
        # Trial 3: $10 left, $5 right (correct: left, $10 > $5)
        practice_decision_trials = [
            {
                "leftDollar": "$5",
                "rightDollar": "$1",
                "firstDollar": "$5",
                "firstSide": "left",      # $5 appears first on left
                "secondDollar": "$1",
                "secondSide": "right",   # $1 appears second on right
                "leftVal": 5,
                "rightVal": 1,
                "correct": "left"
            },
            {
                "leftDollar": "$1",
                "rightDollar": "$10",
                "firstDollar": "$10",
                "firstSide": "right",    # $10 appears first on right
                "secondDollar": "$1",
                "secondSide": "left",    # $1 appears second on left
                "leftVal": 1,
                "rightVal": 10,
                "correct": "right"
            },
            {
                "leftDollar": "$10",
                "rightDollar": "$5",
                "firstDollar": "$10",
                "firstSide": "left",     # $10 appears first on left
                "secondDollar": "$5",
                "secondSide": "right",   # $5 appears second on right
                "leftVal": 10,
                "rightVal": 5,
                "correct": "left"
            }
        ]

        for trial in practice_decision_trials:
            practice_decision_block.append(trial)
            print(f"Practice decision trial: {trial['leftDollar']} vs {trial['rightDollar']} (left={trial['leftVal']}, right={trial['rightVal']}, correct={trial['correct']}, first={trial['firstDollar']} on {trial['firstSide']})")

        # Do NOT shuffle practice decision trials - keep them in order: rabbit/dog, dog/cat, rabbit/cat

        practice_decision_index = -1
        # Store in globals
        globals()['practice_decision_block'] = practice_decision_block
        globals()['practice_decision_index'] = practice_decision_index
        print(f"Practice decision trials: {len(practice_decision_block)} (3 trials)")
        print(f"DEBUG: Stored practice_decision_block in globals with {len(practice_decision_block)} trials")
        print(f"DEBUG: First trial: {practice_decision_block[0] if practice_decision_block else 'EMPTY'}")

        # Initialize ITI duration variables (will be set during trials)
        iti1_duration = 2.0  # Default
        iti2_duration = 2.0  # Default
        iti3_duration = 2.0  # Default (will be calculated in decisionMakingEndRoutine)

        # Initialize duration variables for learning phase (will be set in trialEndRoutine)
        # Initialize them here so Builder can access them even before first trial
        globals()['crosshair1_duration'] = 2.0  # Default
        globals()['actualPoints_duration'] = ACTUAL_POINTS_DURATION  # Default (2.0)
        globals()['crosshair2_duration'] = 2.0  # Default
        globals()['timeout_duration'] = 0  # Default

        # --- Additional variables for the experiment ---
        # True values display
        trueValuesText = ""

        # Decision making variables
        leftFile = "images/blank.png"
        rightFile = "images/blank.png"
        leftVal = 0
        rightVal = 0
        correct_side = ""
        decision_choice = ""
        decision_rt = 0
        decision_start_time = 0

        # Block transition variables
        transitionText = ""
        countdown_time = 30
        countdown_text = ""

        # Trial counters
        current_trial = 0
        total_trials = 30  # Change this to 30 for full experiment

        print(f"Experiment setup complete:")
        print(f"- Gain fruits: {gain_fruits}")
        print(f"- Loss fruits: {loss_fruits}")
        print(f"- Total learning trials: {len(gain_block) + len(loss_block)}")
        print(f"- Decision trials: {len(decision_block)}")
  Routine trial
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    SliderComponent slider
      font = Noto Sans
      forceEndRoutine = False
      granularity = 5
      initVal = 0
      labels = (-100, -80, -60, -40, -20, 0, 20, 40, 60, 80, 100)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1, 0.075)
      startVal [time (s)] = 0
      styles = slider
      ticks = (-100, -80, -60, -40, -20, 0, 20, 40, 60, 80, 100)
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    ImageComponent image_3
      image [set every repeat] = images/blank.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 0
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    CodeComponent code_2
      Code Type = Py
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      Begin Experiment:
        trueValStr = ""
      Begin Routine:
        # Get the current trial from combined learning block
        # The loop nReps controls total trials - we use first nReps/2 from each block type
        # Get learning_block_index from globals (or initialize if first trial)
        learning_block_index = globals().get('learning_block_index', -1)
        learning_block_index += 1
        # Store in globals to persist across trials
        globals()['learning_block_index'] = learning_block_index

        # Calculate how many trials per block based on loop nReps
        # If loop nReps is 60, we want 30 gain + 30 loss
        total_trials = 120  # Default
        trials_per_block = 60  # Default

        try:
            # Try to get nReps from current loop
            if 'currentLoop' in locals() and hasattr(currentLoop, 'nReps'):
                if currentLoop.nReps is not None:
                    total_trials = int(currentLoop.nReps)
                    trials_per_block = total_trials // 2
                    print(f"Using loop nReps: {total_trials} total trials ({trials_per_block} per block)")
            elif 'learningLoop' in globals() and hasattr(learningLoop, 'nReps'):
                if learningLoop.nReps is not None:
                    total_trials = int(learningLoop.nReps)
                    trials_per_block = total_trials // 2
                    print(f"Using learningLoop nReps: {total_trials} total trials ({trials_per_block} per block)")
            else:
                # Fallback: use all available or default
                combined_learning_block_check = globals().get('combined_learning_block', [])
                if combined_learning_block_check:
                    total_trials = len(combined_learning_block_check)
                    trials_per_block = total_trials // 2
                    print(f"Using combined block length: {total_trials} total trials ({trials_per_block} per block)")
                else:
                    print(f"WARNING: Using default {total_trials} total trials ({trials_per_block} per block)")
        except Exception as e:
            print(f"Error getting nReps: {e}, using defaults")
            combined_learning_block_check = globals().get('combined_learning_block', [])
            if combined_learning_block_check:
                total_trials = len(combined_learning_block_check)
                trials_per_block = total_trials // 2

        # Build a limited combined block on-the-fly based on nReps
        # This ensures we use exactly nReps/2 from each block type
        # Store it globally so it persists across trials
        existing_limited = globals().get('limited_combined_block', [])
        combined_learning_block = globals().get('combined_learning_block', [])
        if 'limited_combined_block' not in globals() or len(existing_limited) != total_trials:
            print(f"DEBUG: Building limited block. learning_block_index={learning_block_index}, total_trials={total_trials}, existing_size={len(existing_limited)}")
            # First trial or not yet built - build the limited combined block
            if combined_learning_block and len(combined_learning_block) > 0:
                # The combined_learning_block is structured as: [first_block_all_trials, second_block_all_trials]
                # So we take first trials_per_block from the beginning (first block type)
                # Then we find where second block starts and take first trials_per_block from there

                first_block_type = combined_learning_block[0]["block"]
                second_block_type = "loss" if first_block_type == "gain" else "gain"

                # Find where first block ends and second block begins
                first_block_end = 0
                for i, trial_dict in enumerate(combined_learning_block):
                    if trial_dict["block"] != first_block_type:
                        first_block_end = i
                        break
                else:
                    # All trials are of first type (shouldn't happen, but handle it)
                    first_block_end = len(combined_learning_block)

                # Get first trials_per_block from first block (they're already at the start)
                first_block_trials = combined_learning_block[:min(trials_per_block, first_block_end)]

                # Get first trials_per_block from second block (starting from first_block_end)
                second_block_start = first_block_end
                second_block_trials = combined_learning_block[second_block_start:second_block_start + trials_per_block]

                # Create limited combined block and store globally
                limited_block = first_block_trials + second_block_trials
                globals()['limited_combined_block'] = limited_block
                globals()['total_trials'] = total_trials  # Store for reference
                print(f"Built limited block: {len(first_block_trials)} {first_block_type} + {len(second_block_trials)} {second_block_type} = {len(limited_block)} total (expected {total_trials})")
            else:
                # Fallback: use first total_trials from combined block
                if combined_learning_block:
                    globals()['limited_combined_block'] = combined_learning_block[:total_trials]
                    print(f"Built limited block from combined (fallback): {len(globals()['limited_combined_block'])} trials")
                else:
                    globals()['limited_combined_block'] = []
                    print(f"ERROR: No combined_learning_block available! Available globals: {[k for k in globals().keys() if 'block' in k.lower()]}")

        # Get the limited block (from globals)
        limited_combined_block = globals().get('limited_combined_block', [])

        # Get stored total_trials if available
        stored_total = globals().get('total_trials', total_trials)
        if stored_total != total_trials:
            total_trials = stored_total
            trials_per_block = total_trials // 2

        # Safety check - rebuild if empty or wrong size
        if not limited_combined_block or len(limited_combined_block) != total_trials:
            print(f"WARNING: Limited block mismatch. Expected {total_trials}, got {len(limited_combined_block) if limited_combined_block else 0}")
            # Rebuild if needed - get combined_learning_block from globals
            combined_learning_block = globals().get('combined_learning_block', [])
            if combined_learning_block and len(combined_learning_block) > 0:
                first_block_type = combined_learning_block[0]["block"]
                second_block_type = "loss" if first_block_type == "gain" else "gain"

                # Find where first block ends
                first_block_end = 0
                for i, trial_dict in enumerate(combined_learning_block):
                    if trial_dict["block"] != first_block_type:
                        first_block_end = i
                        break
                else:
                    first_block_end = len(combined_learning_block)

                # Get first trials_per_block from each block
                first_block_trials = combined_learning_block[:min(trials_per_block, first_block_end)]
                second_block_start = first_block_end
                second_block_trials = combined_learning_block[second_block_start:second_block_start + trials_per_block]

                limited_combined_block = first_block_trials + second_block_trials
                globals()['limited_combined_block'] = limited_combined_block
                globals()['total_trials'] = total_trials
                print(f"Rebuilt limited block: {len(first_block_trials)} {first_block_type} + {len(second_block_trials)} {second_block_type} = {len(limited_combined_block)} total")

        # Get current trial - ensure index is valid
        # learning_block_index starts at -1, increments to 0 for first trial, so we use it directly (not -1)
        if learning_block_index >= 0 and learning_block_index < len(limited_combined_block):
            current = limited_combined_block[learning_block_index]
            idx = learning_block_index + 1  # Display as 1-indexed for user
            block_type_str = current["block"].title()
            print(f"{block_type_str} trial {idx}/{total_trials}: {current['fruit']}")
        elif learning_block_index < total_trials:
            # Fallback to combined_learning_block if limited is empty
            combined_learning_block = globals().get('combined_learning_block', [])
            if learning_block_index >= 0 and learning_block_index < len(combined_learning_block):
                current = combined_learning_block[learning_block_index]
                idx = learning_block_index + 1  # Display as 1-indexed
                block_type_str = current["block"].title()
                print(f"{block_type_str} trial {idx}/{len(combined_learning_block)}: {current['fruit']} (using fallback from combined)")
            else:
                print(f"ERROR: Index {learning_block_index} out of range. Combined block has {len(combined_learning_block)} trials")
                current = {"fruit": "images/blank.png", "true_value": 0, "baseline": 0, "block": "unknown"}
                idx = 0
        else:
            # No more trials
            print(f"ERROR: Learning block exceeded. Index={learning_block_index}, Total={total_trials}, Limited block size={len(limited_combined_block) if limited_combined_block else 0}")
            current = {"fruit": "images/blank.png", "true_value": 0, "baseline": 0, "block": "unknown"}
            idx = 0

        # Assign trial values
        fruitFile = current["fruit"]
        trueVal   = current["true_value"]
        baselineR = current["baseline"]
        blockType = current["block"]

        print(f"Trial {idx}: {fruitFile}, value={trueVal}")

        # Clear any keys that were pressed in previous routines (like space from introScreen)
        try:
            event.clearEvents()
            print("DEBUG: Cleared key buffer at trial start")
        except:
            pass  # If event is not available, that's ok

        # Force hide the image initially to prevent ghost fruit, then show real fruit
        if 'image_3' in locals():
            image_3.opacity = 0
            image_3.setImage("images/blank.png")
            # Now set the real fruit image
            image_3.setImage(fruitFile)
            image_3.opacity = 1
            # Reset debug flag for EachFrame
            if hasattr(image_3, '_shown_debug'):
                del image_3._shown_debug
            print(f"DEBUG: BeginRoutine set image to {fruitFile} with opacity {image_3.opacity}")

        # Reset slider to random starting value and ensure it's visible
        if 'slider' in locals():
            import random
            # Get slider min/max if available, otherwise use reasonable defaults
            slider_min = -100  # Default minimum
            slider_max = 100   # Default maximum
            try:
                if hasattr(slider, 'min'):
                    slider_min = slider.min
                if hasattr(slider, 'max'):
                    slider_max = slider.max
            except:
                pass

            # Generate random starting value within slider range
            random_start_value = random.randint(int(slider_min), int(slider_max))

            # Round to nearest 5 to match slider granularity (what's displayed)
            # Slider has granularity=5, so values are rounded to nearest 5 for display
            # Examples: 64 → 65, 32 → 30, -69 → -70
            rounded_start_value = round(random_start_value / 5) * 5

            slider.reset()
            slider.setRating(rounded_start_value)  # Start at rounded value (matches display)
            print(f"Slider reset to random starting value: {random_start_value} → {rounded_start_value} (rounded to nearest 5, range: {slider_min} to {slider_max})")

            # Store rounded slider starting value in globals for logging (matches what's displayed)
            globals()['slider_starting_value'] = rounded_start_value
        else:
            print("WARNING: Slider component not found!")

        # Initialize timing variables for response tracking
        import time
        trial_start_time = time.time()
        response_time = None
        trial_timed_out = False
        responded_in_time = False

        # Store in globals so EachFrame and EndRoutine can access them
        globals()['trial_start_time'] = trial_start_time
        globals()['response_time'] = None
        globals()['trial_timed_out'] = False
        globals()['responded_in_time'] = False

        # Log trial start for data logging
        try:
            data_logger = globals().get('data_logger', None)
            if data_logger:
                data_logger.start_trial(trial_start_time)
        except:
            pass

        # === LOG FRUIT ONSET TIMESTAMP (relative to scanner sync) ===
        # scanner_clock is set/reset in scanner sync when user presses 5 (Block 1 and Block 2)
        # Do NOT create a new clock here - that zeroes onset (e.g. Block 2 trial 1 getting ~0.02s)
        scanner_clock = globals().get('scanner_clock', None) or getattr(thisExp, 'scanner_clock', None)
        if scanner_clock is None:
            # Only create fallback for Block 1 trial 1 (before first scanner sync); never for Block 2
            if learning_block_index < trials_per_block:
                try:
                    import psychopy.core as psychopy_core
                    globals()['scanner_clock'] = psychopy_core.Clock()
                    scanner_clock = globals()['scanner_clock']
                    scanner_clock.reset()
                    print("WARNING: scanner_clock was not set — created fallback for Block 1 (use scanner sync to reset)")
                except Exception as e:
                    print(f"WARNING: Could not create scanner_clock: {e}")
            else:
                print("ERROR: scanner_clock is None for Block 2 — scanner sync should have set it. Fruit onset will be None.")
        if scanner_clock is not None:
            fruit_onset_time = scanner_clock.getTime()
        else:
            fruit_onset_time = None
            print("WARNING: scanner_clock not set — fruit onset time will be None")

        globals()['fruit_onset_time'] = fruit_onset_time
        globals()['first_response_time'] = None
        globals()['first_response_logged'] = False
        globals()['submit_time'] = None
        print(f"Fruit onset: {fruit_onset_time:.4f}s since scanner sync" if fruit_onset_time is not None else "Fruit onset: no clock ref")
      Each Frame:
        # Show the fruit image - FORCE it to be visible
        if 'image_3' in locals() and fruitFile and fruitFile != 'images/blank.png' and fruitFile != '':
            # Set the image and make it visible every frame
            image_3.setImage(fruitFile)
            image_3.opacity = 1.0  # Force opacity to 1.0
            image_3.setAutoDraw(True)  # Force autodraw to ensure it's drawn
            # Debug: print once per trial that image is being shown
            if not hasattr(image_3, '_shown_debug'):
                print(f"DEBUG: Showing image {fruitFile} with opacity {image_3.opacity}, autodraw={image_3.status}")
                image_3._shown_debug = True
        elif 'image_3' in locals():
            image_3.opacity = 0
            image_3.setAutoDraw(False)

        # Display current slider value
        if 'slider' in locals():
            current_value = slider.getRating()
            # Update text display if it exists
            if 'text_slider_value' in locals():
                text_slider_value.text = f"Current rating: {int(current_value)}"
            elif 'text_rating' in locals():
                text_rating.text = f"Current rating: {int(current_value)}"

        # Handle keyboard input for slider controls
        # Using keys 1/2/3: 1 = left (decrease), 2 = continue, 3 = right (increase)
        try:
            keys = event.getKeys(keyList=['1', '2', '3', 'num_1', 'num_2', 'num_3'])
        except (NameError, AttributeError):
            keys = []
            if 'key_resp_2' in locals() and hasattr(key_resp_2, 'keys'):
                if key_resp_2.keys and len(key_resp_2.keys) > 0:
                    keys = [key_resp_2.keys[0]]
                    key_resp_2.keys = []

        for key in keys:
            # Record first_response_time on first key 1 or 3 (scanner-relative timestamp)
            scanner_clock = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
            if scanner_clock and globals().get('first_response_logged') is not True:
                if key in ('num_1', '1', 'num_3', '3'):
                    globals()['first_response_time'] = scanner_clock.getTime()
                    globals()['first_response_logged'] = True

            # Log keypress for data logging
            import time
            current_timestamp = time.time()
            try:
                data_logger = globals().get('data_logger', None)
                if data_logger:
                    data_logger.log_keypress(key, current_timestamp)
            except:
                pass

            # Normalize key names (handle both '1' and 'num_1' formats)
            if key == 'num_1' or key == '1':
                # Key 1: Move slider left by 5 points (allow negatives)
                if 'slider' in locals():
                    current_rating = slider.getRating()
                    new_rating = current_rating - 5
                    slider.setRating(new_rating)
                    print(f"Slider moved left (key 1): {current_rating} -> {new_rating}")

            elif key == 'num_3' or key == '3':
                # Key 3: Move slider right by 5 points
                if 'slider' in locals():
                    current_rating = slider.getRating()
                    new_rating = current_rating + 5
                    slider.setRating(new_rating)
                    print(f"Slider moved right (key 3): {current_rating} -> {new_rating}")

            elif key == 'num_2' or key == '2':
                # Key 2: Submit answer - calculate response time and submit_time (scanner-relative)
                import time
                trial_start_time = globals().get('trial_start_time', time.time())
                response_time = time.time() - trial_start_time
                scanner_clock = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
                if scanner_clock:
                    globals()['submit_time'] = scanner_clock.getTime()

                # Get timeout threshold (from startTaskBeginExperiment or default)
                try:
                    if 'TRIAL_TIMEOUT_SECONDS' in globals():
                        pass  # Use existing value
                    else:
                        TRIAL_TIMEOUT_SECONDS = 8.0  # Default
                except:
                    TRIAL_TIMEOUT_SECONDS = 8.0  # Default

                if response_time <= TRIAL_TIMEOUT_SECONDS:
                    responded_in_time = True
                    trial_timed_out = False
                    print(f"Answer submitted (key 2) in {response_time:.2f} seconds (within {TRIAL_TIMEOUT_SECONDS}s limit)")
                else:
                    # Shouldn't happen since we check timeout below, but just in case
                    responded_in_time = False
                    trial_timed_out = True
                    print(f"Answer submitted (key 2) in {response_time:.2f} seconds (over {TRIAL_TIMEOUT_SECONDS}s limit)")

                # Store in globals for EndRoutine
                globals()['response_time'] = response_time
                globals()['responded_in_time'] = responded_in_time
                globals()['trial_timed_out'] = trial_timed_out

                continueRoutine = False
                event.clearEvents()
                break

        # Check for timeout - use config value
        try:
            import time

            # Get trial_start_time from globals
            trial_start_time = globals().get('trial_start_time', time.time())

            # Get timeout threshold (from startTaskBeginExperiment or default)
            try:
                if 'TRIAL_TIMEOUT_SECONDS' in globals():
                    pass  # Use existing value
                else:
                    TRIAL_TIMEOUT_SECONDS = 8.0  # Default
            except:
                TRIAL_TIMEOUT_SECONDS = 8.0  # Default

            # Check if already responded
            responded_in_time = globals().get('responded_in_time', False)

            elapsed_time = time.time() - trial_start_time

            if elapsed_time >= TRIAL_TIMEOUT_SECONDS and not responded_in_time:
                # Trial timed out
                trial_timed_out = True
                response_time = TRIAL_TIMEOUT_SECONDS
                responded_in_time = False

                # Store in globals for EndRoutine
                globals()['response_time'] = response_time
                globals()['responded_in_time'] = responded_in_time
                globals()['trial_timed_out'] = trial_timed_out

                print(f"Trial timed out at {TRIAL_TIMEOUT_SECONDS} seconds")
                continueRoutine = False
                event.clearEvents()
        except:
            pass

        # Alternative: Fallback to keyboard component method if event.getKeys() doesn't work
        # if 'key_resp_2' in locals():
        #     keys = getattr(key_resp_2, 'keys', None)
        #     if keys and len(keys) > 0:
        #         key = keys[0]
        #         if key == 'left' and 'slider' in locals():
        #             current_rating = slider.getRating()
        #             slider.setRating(max(0, current_rating - 5))
        #         elif key == 'right' and 'slider' in locals():
        #             current_rating = slider.getRating()
        #             slider.setRating(min(100, current_rating + 5))
        #         elif key == 'return' or key == 'space':
        #             continueRoutine = False
        #         key_resp_2.keys = []

        # Check if slider itself is being clicked (alternative submission method)
        if 'slider' in locals() and slider.getMouseResponses():
            # User clicked on slider to submit
            slider_responses = slider.getMouseResponses()
            if slider_responses:
                print(f"Slider clicked to submit: {slider.getRating()}")
                continueRoutine = False
      End Routine:
        rating = slider.getRating()
        rt = slider.getRT()

        # Get response_time, responded_in_time, and trial_timed_out from globals (set in EachFrame)
        response_time = globals().get('response_time', None)
        responded_in_time = globals().get('responded_in_time', False)
        trial_timed_out = globals().get('trial_timed_out', False)

        # Use response_time if available (from our tracking), otherwise use slider RT
        actual_response_time = response_time if response_time is not None else rt

        # Convert to milliseconds for logging
        reaction_time_ms = int(actual_response_time * 1000) if actual_response_time else 0

        print(f"Trial EndRoutine: RT={actual_response_time:.3f}s, responded_in_time={responded_in_time}, timed_out={trial_timed_out}")

        thisExp.addData("block", blockType)
        thisExp.addData("fruit", fruitFile)
        thisExp.addData("baseline", baselineR)
        thisExp.addData("true_value", trueVal)
        thisExp.addData("predicted", rating)
        thisExp.addData("predicted_rt", actual_response_time)
        thisExp.addData("responded_in_time", responded_in_time)
        thisExp.addData("trial_timed_out", trial_timed_out)

        # Log trial data
        try:
            # Extract fruit name from fruitFile (remove path and extension)
            # Use string operations instead of os.path for PsychoPy compatibility
            if fruitFile:
                # Handle both '/' and '\' path separators
                fruit_name = str(fruitFile).replace('\\', '/').split('/')[-1].replace('.png', '')
            else:
                fruit_name = "unknown"

            # Determine trial number within block (1-indexed)
            # learning_block_index is 0-indexed, so trial number = learning_block_index + 1
            # But we need trial number WITHIN the current block
            # Get learning_block_index from globals (should be set in BeginRoutine)
            learning_block_index = globals().get('learning_block_index', -1)
            limited_combined_block = globals().get('limited_combined_block', [])
            total_expected = globals().get('total_trials', 120)
            trials_per_block = total_expected // 2

            # Determine which block we're in based on learning_block_index
            if learning_block_index < trials_per_block:
                # First block
                trial_num_within_block = learning_block_index + 1
                block_id = 1 if blockType == "gain" else 2
                block_name = "rewards" if blockType == "gain" else "punishment"
            else:
                # Second block
                trial_num_within_block = (learning_block_index - trials_per_block) + 1
                block_id = 1 if blockType == "gain" else 2
                block_name = "rewards" if blockType == "gain" else "punishment"

            # Defer CSV logging until after timing durations are computed (so we can log crosshair durations)
        except Exception as e:
            print(f"Error logging trial data: {e}")

        # Calculate durations for subsequent routines and set text
        import random

        # Use timing config values (set in startTaskBeginExperiment or defaults)
        # Avoid os import to prevent conflicts with PsychoPy
        try:
            # Try to use values from startTaskBeginExperiment
            if 'TRIAL_TIMEOUT_SECONDS' in globals():
                pass  # Use existing values
            else:
                TRIAL_TIMEOUT_SECONDS = 8.0
                CROSSHAIR_RANDOM_VALUES = [2, 3, 4]
                TIMEOUT_SCREEN_DURATION = 1.5
                ACTUAL_POINTS_DURATION = 2.0
        except:
            # Fallback defaults
            TRIAL_TIMEOUT_SECONDS = 8.0
            CROSSHAIR_RANDOM_VALUES = [2, 3, 4]
            TIMEOUT_SCREEN_DURATION = 1.5
            ACTUAL_POINTS_DURATION = 2.0

        # Set actual_points_text here so it's available before actualPoints routine starts
        # Make sure trueVal exists first
        try:
            # Convert to int for display (trueVal can be float)
            actual_points_text = f"Actual points: {int(trueVal):+d}"
        except:
            actual_points_text = "Actual points: 0"

        if responded_in_time and actual_response_time <= TRIAL_TIMEOUT_SECONDS:
            # Case 1: Responded in time (t <= TRIAL_TIMEOUT_SECONDS)
            FAST_MODE = globals().get('FAST_MODE', False)
            rand1 = random.choice(CROSSHAIR_RANDOM_VALUES)
            if FAST_MODE:
                crosshair1_duration = 0.0
                actualPoints_duration = 0.0
                rand2 = random.choice(CROSSHAIR_RANDOM_VALUES)
                crosshair2_duration = 0.0
                timeout_duration = 0.0
            else:
                crosshair1_duration = rand1 + (TRIAL_TIMEOUT_SECONDS - actual_response_time)
                actualPoints_duration = ACTUAL_POINTS_DURATION  # From config
                rand2 = random.choice(CROSSHAIR_RANDOM_VALUES)
                crosshair2_duration = rand2
                timeout_duration = 0  # No timeout screen

            # Store in globals so Builder can access them via $variableName
            globals()['crosshair1_duration'] = crosshair1_duration
            globals()['actualPoints_duration'] = actualPoints_duration
            globals()['crosshair2_duration'] = crosshair2_duration
            globals()['timeout_duration'] = timeout_duration
            globals()['crosshair1_rand'] = rand1
            globals()['crosshair2_rand'] = rand2

            # Log timing data
            thisExp.addData("crosshair1_rand", rand1)
            thisExp.addData("crosshair1_duration", crosshair1_duration)
            thisExp.addData("actualPoints_duration", actualPoints_duration)
            thisExp.addData("crosshair2_rand", rand2)
            thisExp.addData("crosshair2_duration", crosshair2_duration)
            thisExp.addData("timeout_duration", timeout_duration)

            print(f"Case 1: RT={actual_response_time:.2f}s")
            print(f"  rand1={rand1}, crosshair1={rand1} + ({TRIAL_TIMEOUT_SECONDS}-{actual_response_time:.2f}) = {crosshair1_duration:.2f}s")
            print(f"  actualPoints={ACTUAL_POINTS_DURATION}s (from config)")
            print(f"  rand2={rand2}, crosshair2={rand2}s")
        else:
            # Case 2: Timed out (t > TRIAL_TIMEOUT_SECONDS)
            FAST_MODE = globals().get('FAST_MODE', False)
            timeout_duration = TIMEOUT_SCREEN_DURATION
            rand1 = random.choice(CROSSHAIR_RANDOM_VALUES)
            if FAST_MODE:
                timeout_duration = 0.0
                crosshair1_duration = 0.0
                actualPoints_duration = 0.0
                rand2 = random.choice(CROSSHAIR_RANDOM_VALUES)
                crosshair2_duration = 0.0
            else:
                crosshair1_duration = max(0, rand1 - TIMEOUT_SCREEN_DURATION)  # Ensure non-negative
                actualPoints_duration = ACTUAL_POINTS_DURATION  # From config
                rand2 = random.choice(CROSSHAIR_RANDOM_VALUES)
                crosshair2_duration = rand2

            # Store in globals so Builder can access them via $variableName
            globals()['timeout_duration'] = timeout_duration
            globals()['crosshair1_duration'] = crosshair1_duration
            globals()['actualPoints_duration'] = actualPoints_duration
            globals()['crosshair2_duration'] = crosshair2_duration
            globals()['crosshair1_rand'] = rand1
            globals()['crosshair2_rand'] = rand2

            # Log timing data
            thisExp.addData("timeout_duration", timeout_duration)
            thisExp.addData("crosshair1_rand", rand1)
            thisExp.addData("crosshair1_duration", crosshair1_duration)
            thisExp.addData("actualPoints_duration", actualPoints_duration)
            thisExp.addData("crosshair2_rand", rand2)
            thisExp.addData("crosshair2_duration", crosshair2_duration)

            print(f"Case 2: Timeout at {TRIAL_TIMEOUT_SECONDS}s")
            print(f"  timeout={TIMEOUT_SCREEN_DURATION}s")
            print(f"  rand1={rand1}, crosshair1={rand1} - {TIMEOUT_SCREEN_DURATION} = {crosshair1_duration:.2f}s")
            print(f"  actualPoints={ACTUAL_POINTS_DURATION}s (from config)")
            print(f"  rand2={rand2}, crosshair2={rand2}s")

        # Log trial to CSV (includes crosshair durations)
        try:
            data_logger = globals().get('data_logger', None)
            if data_logger:
                slider_starting_value = globals().get('slider_starting_value', None)
                data_logger.log_learning_trial(
                    trial_num=trial_num_within_block,
                    block_id=block_id,
                    block_name=block_name,
                    stimulus_identity=fruit_name,
                    stimulus_avg_points=baselineR,
                    actual_points=trueVal,
                    prediction_value=int(rating),
                    reaction_time_ms=reaction_time_ms,
                    responded_in_time=responded_in_time,
                    trial_timed_out=trial_timed_out,
                    slider_starting_value=slider_starting_value,
                    crosshair1_duration=globals().get('crosshair1_duration', None),
                    crosshair2_duration=globals().get('crosshair2_duration', None),
                    crosshair1_rand=globals().get('crosshair1_rand', None),
                    crosshair2_rand=globals().get('crosshair2_rand', None),
                    timeout_duration=globals().get('timeout_duration', None),
                    actual_points_duration=globals().get('actualPoints_duration', None),
                    fruit_onset_time=globals().get('fruit_onset_time'),
                    first_response_time=globals().get('first_response_time'),
                    submit_time=globals().get('submit_time'),
                )
        except Exception as e:
            print(f"Error logging trial data (with crosshair durations): {e}")

        # Check if we've completed the first block (halfway point)
        # This will trigger the transition screen before starting the second block
        # Get learning_block_index from globals (should be set in BeginRoutine)
        learning_block_index = globals().get('learning_block_index', -1)
        limited_combined_block = globals().get('limited_combined_block', [])
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # learning_block_index is 0-indexed and incremented at START of each trial
        # After completing the last trial of first block (trial #trials_per_block),
        # learning_block_index = trials_per_block - 1
        # At the end of that trial, we want to show transition screen
        # So we check if we just completed the last trial of the first block
        if learning_block_index == trials_per_block - 1:
            print(f"DEBUG: First block complete check - learning_block_index={learning_block_index}, trials_per_block={trials_per_block}")
            # We've just completed the first block - set flag to show transition screen
            globals()['show_block_transition'] = True

            # Save learning data for first block
            try:
                data_logger = globals().get('data_logger', None)
                if data_logger:
                    # Determine block name based on first block type
                    first_block_type = blockType if learning_block_index == 0 else None
                    if not first_block_type and limited_combined_block:
                        first_block_type = limited_combined_block[0]["block"]
                    block_name = "rewards" if first_block_type == "gain" else "punishment"
                    data_logger.save_learning_data(block_num=1, block_name=block_name)
            except Exception as e:
                print(f"Error saving first block data: {e}")

            print(f"First block complete! ({trials_per_block} trials) - Transition screen will appear next.")

        # Check if we've completed all learning trials
        # learning_block_index is 0-indexed and incremented at START of each trial
        # After completing the last trial (trial N where N = total_expected),
        # learning_block_index = N - 1 = total_expected - 1
        # So we check if we've just completed the last trial
        print(f"DEBUG: Checking if all trials complete - learning_block_index={learning_block_index}, total_expected={total_expected}, condition={learning_block_index == total_expected - 1}")
        if learning_block_index == total_expected - 1:
            print(f"Learning trials complete. Completed {learning_block_index + 1}/{total_expected} trials.")

            # Save learning data for second block
            try:
                data_logger = globals().get('data_logger', None)
                if data_logger:
                    # Determine block name based on second block type
                    if limited_combined_block and len(limited_combined_block) > trials_per_block:
                        second_block_type = limited_combined_block[trials_per_block]["block"]
                        block_name = "rewards" if second_block_type == "gain" else "punishment"
                        print(f"Saving second block data: block_num=2, block_name={block_name}")
                        data_logger.save_learning_data(block_num=2, block_name=block_name)
                    else:
                        # Fallback: determine block name from current blockType
                        # Since we're in the second block, blockType should be the second block type
                        block_name = "rewards" if blockType == "gain" else "punishment"
                        print(f"Saving second block data (fallback): block_num=2, block_name={block_name}")
                        data_logger.save_learning_data(block_num=2, block_name=block_name)
            except Exception as e:
                print(f"Error saving second block data: {e}")
                import traceback
                traceback.print_exc()

            # End the loop (assuming loop is named learningLoop or similar)
            if 'learningLoop' in locals():
                learningLoop.finished = True
            elif 'currentLoop' in locals():
                currentLoop.finished = True
    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right','return'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    TextComponent text_slider_value
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
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  Routine decisionPhase
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Press C to continue with the first block.
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    KeyboardComponent key_resp_4
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine decisionInstructions
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    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have completed the learning phase and will now make decisions between pairs of fruits based on what you learned.

        Performance Bonus Opportunity:
        Most people get 70% of their responses correctly.
        If you'll be correct in more than 80% of your decisions, you will receive a bonus compensation.

        Try to recall the points associated with each fruit and make the best choices you can.

        Click C to continue.
    TextComponent text_9
      letterHeight = 0.06
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Decision Task Instructions
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    KeyboardComponent key_resp_5
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine whichFruit
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    TextComponent text_10
      letterHeight = 0.06
      startVal [time (s)] = 0.0
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      text:
        Which fruit would you pick?

        In this block, you will choose between pairs of fruits. Choose the fruit you think will give you more points.

        Use "1" to choose the fruit on the left side of the screen, and "3" to choose the fruit on the right side of the screen.

        Click C to continue.
    KeyboardComponent key_resp_6
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine timeout
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    TextComponent text_timeout
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $timeout_duration
      text = Time out
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    CodeComponent code_7
      Code Type = Py
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      Begin Routine:
        # Timeout screen - shows "Time out" message
        # Duration is exactly 1.5 seconds (set in Builder or dynamically)
        # Only show if timeout_duration > 0

        if 'timeout_duration' in locals() and timeout_duration > 0:
            if 'text_timeout' in locals():
                text_timeout.text = "Time out"
                text_timeout.opacity = 1
                text_timeout.setAutoDraw(True)
                print("Showing timeout screen")
            else:
                print("WARNING: text_timeout component not found!")
        else:
            # No timeout - skip this screen (duration should be 0)
            print("Skipping timeout screen (no timeout occurred)")
            if 'text_timeout' in locals():
                text_timeout.opacity = 0
      Each Frame:
        # Timeout screen - just wait for duration
        pass
  Routine crosshair1
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crosshair1_duration
      text = +
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    CodeComponent code_6
      Code Type = Py
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      Begin Routine:
        # First crosshair screen - duration set dynamically based on trial response time
        # Duration is set in trialEndRoutine.py as crosshair1_duration
        # This routine will show a crosshair in the center of the screen

        # Make sure crosshair is visible (add a crosshair component in Builder)
        if 'crosshair' in locals():
            crosshair.opacity = 1
            crosshair.setAutoDraw(True)
      Each Frame:
        # Crosshair screen - just wait for duration
        # Duration is controlled by PsychoPy Builder routine settings
        pass
  Routine crosshair2
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $crosshair2_duration
      text = +
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    CodeComponent code_9
      Code Type = Py
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      Begin Routine:
        # Second crosshair screen - duration is random 2-4 seconds
        # Duration is set in trialEndRoutine.py as crosshair2_duration

        # Make sure crosshair is visible
        if 'crosshair' in locals():
            crosshair.opacity = 1
            crosshair.setAutoDraw(True)
      Each Frame:
        # Crosshair screen - just wait for duration
        pass
  Routine actualPoints
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    TextComponent image_30
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $actualPoints_duration
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    CodeComponent code_8
      Code Type = Py
      Begin Routine:
        # Actual points screen - shows the true value
        # Duration is set dynamically based on trial response time
        # IMPORTANT: In Builder, leave the Text component's text field BLANK - code will set it

        # Get trueVal and create the text
        actual_points_text = "Actual points: 0"  # Initialize first

        # Try to get trueVal from various sources
        if 'trueVal' in locals():
            # Convert to int for display (trueVal can be float)
            actual_points_text = f"Actual points: {int(trueVal):+d}"
        elif 'trueVal' in globals():
            # Convert to int for display (trueVal can be float)
            actual_points_text = f"Actual points: {int(trueVal):+d}"
        else:
            # Fallback: try to get from actual_points_text if it was set in trialEndRoutine
            try:
                if 'actual_points_text' in locals():
                    pass  # Use the value that exists
                else:
                    actual_points_text = "Actual points: 0"
            except:
                actual_points_text = "Actual points: 0"

        # Set the text component (DO NOT set text in Builder - leave it blank!)
        # Try multiple possible component names
        if 'text_actual_points' in locals():
            text_actual_points.text = actual_points_text
            text_actual_points.opacity = 1
            text_actual_points.setAutoDraw(True)
            print(f"Showing actual points: {actual_points_text}")
        elif 'image_30' in locals():
            # Handle case where component was accidentally renamed to image_30
            image_30.text = actual_points_text
            image_30.opacity = 1
            image_30.setAutoDraw(True)
            print(f"Showing actual points (via image_30): {actual_points_text}")
        else:
            print("WARNING: text_actual_points or image_30 component not found!")

        # Ensure actualPoints_duration is available from globals
        # This helps Builder access it for the routine duration
        if 'actualPoints_duration' not in globals():
            # Fallback to default if not set yet
            globals()['actualPoints_duration'] = 2.0
            print("WARNING: actualPoints_duration not found in globals, using default 2.0")
        else:
            print(f"actualPoints_duration is {globals()['actualPoints_duration']} seconds")
      End Routine:
        # Hide actual points text
        if 'text_actual_points' in locals():
            text_actual_points.setAutoDraw(False)
            text_actual_points.opacity = 0
        elif 'image_30' in locals():
            image_30.setAutoDraw(False)
            image_30.opacity = 0

        # Clear any key presses
        try:
            event.clearEvents()
        except:
            pass

        print("Actual points routine ended")
  Routine decisionStimulus1
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    TextComponent text_question
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Any text

        including line breaks
    ImageComponent image_left1
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_right2
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_10
      Code Type = Py
      Begin Routine:
        # First stimulus screen - shows first fruit on its side for 2 seconds
        # Components: text_question, image_left1, image_right2

        # Get decision_index and decision_block from globals
        decision_index = globals().get('decision_index', 0)
        decision_block = globals().get('decision_block', [])

        if decision_block:
            # Use modulo to cycle through trials if needed
            trial_idx = decision_index % len(decision_block)
            current = decision_block[trial_idx]
            first_fruit = current["firstFruit"]
            first_side = current["firstSide"]

            # Show central fixation cross
            if 'text_question' in locals():
                text_question.text = "+"
                try:
                    text_question.setPos((0, 0))
                except AttributeError:
                    text_question.pos = (0, 0)
                text_question.opacity = 1
                text_question.setAutoDraw(True)

            # Show first fruit on its designated side
            if first_side == "left":
                if 'image_left1' in locals():
                    image_left1.setImage(first_fruit)
                    image_left1.opacity = 1
                    image_left1.setAutoDraw(True)
                if 'image_right2' in locals():
                    image_right2.opacity = 0
                    image_right2.setAutoDraw(False)
            else:  # right
                if 'image_right2' in locals():
                    image_right2.setImage(first_fruit)
                    image_right2.opacity = 1
                    image_right2.setAutoDraw(True)
                if 'image_left1' in locals():
                    image_left1.opacity = 0
                    image_left1.setAutoDraw(False)

            print(f"Decision {decision_index+1}: Showing {first_fruit} on {first_side} (2 seconds)")

            # Capture stimulus1 onset timestamp (scanner-relative)
            # Prefer globals (match day 1); scanner_clock reset only in scanner sync when user presses 5
            from_globals = globals().get('scanner_clock', None)
            from_exp = getattr(thisExp, 'scanner_clock', None)
            scanner_clock = from_globals or from_exp
            _src = "globals" if from_globals else ("thisExp" if from_exp else "None")
            print(f"DEBUG stimulus1: decision_index={decision_index+1}, clock_source={_src}")
            if scanner_clock is None:
                try:
                    import psychopy.core as psychopy_core
                    clock = psychopy_core.Clock()
                    clock.reset()
                    thisExp.scanner_clock = clock
                    globals()['scanner_clock'] = clock
                    scanner_clock = clock
                    print("WARNING: scanner_clock was not set — created fallback (use scanner sync to reset)")
                except Exception as e:
                    print(f"WARNING: Could not create scanner_clock: {e}")
            if scanner_clock is not None:
                stimulus1_onset_time = scanner_clock.getTime()
                globals()['stimulus1_onset_time'] = stimulus1_onset_time
                print(f"Stimulus 1 onset: {stimulus1_onset_time:.4f}s since scanner sync")
            else:
                globals()['stimulus1_onset_time'] = None
                print("WARNING: scanner_clock not set — stimulus1_onset_time will be None")
        else:
            print("No more decision trials")
  Routine decisionITI1
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti1_duration
      text = +
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    CodeComponent code_11
      Code Type = Py
      Begin Routine:
        # ITI 1 - Crosshair screen (random 1-3 seconds)
        # Component: text_15 (crosshair)
        import random

        # Hide previous text and fruits
        if 'text_question' in locals():
            text_question.opacity = 0
            text_question.setAutoDraw(False)

        if 'image_left1' in locals():
            image_left1.opacity = 0
            image_left1.setAutoDraw(False)

        if 'image_right2' in locals():
            image_right2.opacity = 0
            image_right2.setAutoDraw(False)

        # Show crosshair
        if 'text_15' in locals():
            text_15.text = "+"  # Crosshair symbol
            text_15.opacity = 1
            text_15.setAutoDraw(True)

        # Random duration: 1, 2, or 3 seconds - store in globals so decisionMakingEndRoutine can log actual duration
        iti1_duration = random.choice([1, 2, 3])
        globals()['iti1_duration'] = iti1_duration
        print(f"ITI 1: {iti1_duration} seconds")
  Routine decisionStimulus2
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    TextComponent text_question_2
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        Any text

        including line breaks
    ImageComponent image_left1_2
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image_right2_2
      pos = (.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_12
      Code Type = Py
      Begin Routine:
        # Second stimulus screen - shows second fruit on opposite side for 2 seconds
        # Components: text_question_2, image_left1_2, image_right2_2

        # Get decision_index and decision_block from globals
        decision_index = globals().get('decision_index', 0)
        decision_block = globals().get('decision_block', [])

        if decision_block:
            # Use modulo to cycle through trials if needed
            trial_idx = decision_index % len(decision_block)
            current = decision_block[trial_idx]
            second_fruit = current["secondFruit"]
            second_side = current["secondSide"]

            # Show central fixation cross
            if 'text_question_2' in locals():
                text_question_2.text = "+"
                try:
                    text_question_2.setPos((0, 0))
                except AttributeError:
                    text_question_2.pos = (0, 0)
                text_question_2.opacity = 1
                text_question_2.setAutoDraw(True)

            # Hide previous crosshair
            if 'text_15' in locals():
                text_15.opacity = 0
                text_15.setAutoDraw(False)

            # Show second fruit on its designated side
            if second_side == "left":
                if 'image_left1_2' in locals():
                    image_left1_2.setImage(second_fruit)
                    image_left1_2.opacity = 1
                    image_left1_2.setAutoDraw(True)
                if 'image_right2_2' in locals():
                    image_right2_2.opacity = 0
                    image_right2_2.setAutoDraw(False)
            else:  # right
                if 'image_right2_2' in locals():
                    image_right2_2.setImage(second_fruit)
                    image_right2_2.opacity = 1
                    image_right2_2.setAutoDraw(True)
                if 'image_left1_2' in locals():
                    image_left1_2.opacity = 0
                    image_left1_2.setAutoDraw(False)

            print(f"Decision {decision_index+1}: Showing {second_fruit} on {second_side} (2 seconds)")

            # Capture stimulus2 onset timestamp (scanner-relative)
            # DEBUG: trace clock source (stimulus2_onset=0 often means wrong/reset clock)
            from_exp = getattr(thisExp, 'scanner_clock', None)
            from_globals = globals().get('scanner_clock', None)
            scanner_clock = from_globals or from_exp  # Prefer globals (match day 1, learning)
            _src = "globals" if from_globals else ("thisExp" if from_exp else "None")
            print(f"DEBUG stimulus2: decision_index={decision_index+1}, clock_source={_src}, from_globals={from_globals is not None}, from_thisExp={from_exp is not None}")
            if scanner_clock is not None:
                stimulus2_onset_time = scanner_clock.getTime()
                globals()['stimulus2_onset_time'] = stimulus2_onset_time
                print(f"Stimulus 2 onset: {stimulus2_onset_time:.4f}s since scanner sync (trial {decision_index+1})")
                if stimulus2_onset_time < 0.1:
                    print(f"DEBUG stimulus2: ONSET NEAR ZERO - check if scanner_clock was reset or is wrong clock")
            else:
                globals()['stimulus2_onset_time'] = None
                print("WARNING: scanner_clock not set — stimulus2_onset_time will be None")
        else:
            print("No more decision trials")
  Routine decisionITI2
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti2_duration
      text = +
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    CodeComponent code_13
      Code Type = Py
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      Begin Routine:
        # ITI 2 - Crosshair screen (random 1-3 seconds)
        # Component: text_16 (crosshair)
        import random

        # Hide previous text and fruits
        if 'text_question_2' in locals():
            text_question_2.opacity = 0
            text_question_2.setAutoDraw(False)

        if 'image_left1_2' in locals():
            image_left1_2.opacity = 0
            image_left1_2.setAutoDraw(False)

        if 'image_right2_2' in locals():
            image_right2_2.opacity = 0
            image_right2_2.setAutoDraw(False)

        # Show crosshair
        if 'text_16' in locals():
            text_16.text = "+"  # Crosshair symbol
            text_16.opacity = 1
            text_16.setAutoDraw(True)

        # Random duration: 1, 2, or 3 seconds - store in globals so decisionMakingEndRoutine can log actual duration
        iti2_duration = random.choice([1, 2, 3])
        globals()['iti2_duration'] = iti2_duration
        print(f"ITI 2: {iti2_duration} seconds")
  Routine decisionMaking
    RoutineSettingsComponent decisionMaking
      stopVal [duration (s)] = 2
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    TextComponent text_question_1
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_left_left
      pos = (-0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    ImageComponent image_right_right
      pos = (0.4, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_14
      Code Type = Py
      Begin Routine:
        # Decision phase - both fruits shown simultaneously (2 seconds fixed)
        # Components: text_question_1, image_left_left, image_right_right, mouse_2
        import time

        # Get decision_index and decision_block from globals (ensure they persist)
        decision_index = globals().get('decision_index', 0)
        decision_block = globals().get('decision_block', [])

        # Use modulo to cycle through decision_block if needed (for when nReps > len(decision_block))
        if decision_block:
            # Use modulo to cycle through trials if we need more than available
            trial_idx = decision_index % len(decision_block)
            current = decision_block[trial_idx]

            # IMPORTANT: Maintain the sides where each fruit appeared individually
            # firstFruit appeared on firstSide, secondFruit appeared on secondSide (opposite side)
            # They should maintain these positions when shown together
            first_fruit = current["firstFruit"]
            first_side = current["firstSide"]
            second_fruit = current["secondFruit"]

            # Determine which fruit goes on left and which on right based on where they appeared individually
            # Since firstFruit and secondFruit appear on opposite sides:
            # - If firstFruit was on left, it stays on left; secondFruit (on right) stays on right
            # - If firstFruit was on right, it stays on right; secondFruit (on left) stays on left
            if first_side == "left":
                leftFile = first_fruit   # firstFruit was on left, stays on left
                rightFile = second_fruit  # secondFruit was on right, stays on right
            else:  # first_side == "right"
                leftFile = second_fruit   # secondFruit was on left, stays on left
                rightFile = first_fruit   # firstFruit was on right, stays on right

            # Recalculate correct side based on actual positions
            # Get fruit values to determine which side is correct
            left_val = current.get("leftVal", 0)  # Value of fruit originally on left
            right_val = current.get("rightVal", 0)  # Value of fruit originally on right

            # But we need the values of the fruits in their actual positions
            # Get fruit_values dictionary to look up actual values
            fruit_values = globals().get('fruit_values', {})
            actual_left_val = fruit_values.get(leftFile, 0)
            actual_right_val = fruit_values.get(rightFile, 0)

            # Correct side is the side with the higher value fruit
            correct = "left" if actual_left_val > actual_right_val else "right"

            # Store correct value in globals for use in EndRoutine
            globals()['decision_correct_side'] = correct

            # Show central fixation cross
            if 'text_question_1' in locals():
                text_question_1.text = "+"
                try:
                    text_question_1.setPos((0, 0))
                except AttributeError:
                    text_question_1.pos = (0, 0)
                text_question_1.opacity = 1
                text_question_1.setAutoDraw(True)

            # Hide previous crosshair
            if 'text_16' in locals():
                text_16.opacity = 0
                text_16.setAutoDraw(False)

            # Set both images - maintain positions from individual presentations
            if 'image_left_left' in locals():
                image_left_left.setImage(leftFile)
                image_left_left.opacity = 1
                image_left_left.setAutoDraw(True)
            if 'image_right_right' in locals():
                image_right_right.setImage(rightFile)
                image_right_right.opacity = 1
                image_right_right.setAutoDraw(True)

            # Reset choice and start timer
            choice = ""
            decision_start_time = time.time()
            decision_timed_out = False
            # Clear prior RT so timeouts can't accidentally inherit a previous trial's RT
            globals()['decision_rt'] = None

            # Store in globals for use in EachFrame
            globals()['choice'] = choice
            globals()['decision_start_time'] = decision_start_time
            globals()['decision_timed_out'] = False

            # Log decision start for data logging
            try:
                data_logger = globals().get('data_logger', None)
                if data_logger:
                    data_logger.start_decision(decision_start_time)
            except:
                pass

            # Clear any key presses from previous routines ONCE at the start
            # This prevents keys pressed during decisionStimulus1/2 or ITIs from being registered here
            try:
                event.clearEvents()
                print(f"Cleared key buffer at decision start")
            except:
                pass

            # Set a small ignore window to prevent immediate key registration (0.1 seconds)
            # This ensures keys pressed right before this routine started are ignored
            ignore_keys_until = decision_start_time + 0.1
            globals()['ignore_keys_until'] = ignore_keys_until

            if 'mouse_2' in locals():
                mouse_2.clickReset()

            # Debug: Show which fruits appeared where individually
            print(f"Decision {decision_index+1}: {first_fruit} (was on {first_side}) vs {second_fruit} (was on {second_side})")
            print(f"  Final positions: {leftFile} (left) vs {rightFile} (right), correct={correct}")

            # Capture both-fruits onset timestamp and reset choice_time (scanner-relative)
            scanner_clock = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
            if scanner_clock is not None:
                both_fruits_onset_time = scanner_clock.getTime()
                globals()['both_fruits_onset_time'] = both_fruits_onset_time
                globals()['decision_choice_time'] = None  # Will be set when choice is made
                print(f"Both fruits onset: {both_fruits_onset_time:.4f}s since scanner sync")
            else:
                globals()['both_fruits_onset_time'] = None
                globals()['decision_choice_time'] = None
                print("WARNING: scanner_clock not set — both_fruits_onset_time will be None")
        else:
            # No more decision trials
            leftFile = "images/blank.png"
            rightFile = "images/blank.png"
            choice = ""
            print("No more decision trials available")
      Each Frame:
        # Decision phase - check for response
        # Using keys 1/3: 1 = left image, 3 = right image
        import time

        # Get decision_index from globals (needed for logging)
        decision_index = globals().get('decision_index', 0)

        # Get decision_start_time and ignore_keys_until from globals (set in BeginRoutine)
        decision_start_time = globals().get('decision_start_time', time.time())
        ignore_keys_until = globals().get('ignore_keys_until', decision_start_time + 0.1)

        # Initialize decision_timed_out if not already set
        decision_timed_out = globals().get('decision_timed_out', False)

        # Get the actual timeout duration from configuration (set in startTaskBeginExperiment.py)
        # This is configurable via DECISION_TIMEOUT_DURATION global variable
        decision_timeout_duration = globals().get('DECISION_TIMEOUT_DURATION', 4.0)
        try:
            # Also try to get from routine duration if available (for Builder compatibility)
            if 'decisionMaking' in locals():
                if hasattr(decisionMaking, 'duration'):
                    routine_duration = float(decisionMaking.duration)
                    if routine_duration > 0:
                        decision_timeout_duration = routine_duration
                elif hasattr(decisionMaking, 'stopVal'):
                    routine_duration = float(decisionMaking.stopVal)
                    if routine_duration > 0:
                        decision_timeout_duration = routine_duration
        except:
            # Use configured default
            pass

        # Store response window in globals under a separate name (avoid clobbering decisionTimeout routine duration)
        globals()['decision_response_limit_s'] = decision_timeout_duration

        # Check for timeout (use actual duration from Builder, not hardcoded 2.0)
        try:
            elapsed_time = time.time() - decision_start_time

            if elapsed_time >= decision_timeout_duration:
                # Timeout - no response (routine will end at the actual timeout duration)
                if not globals().get('choice', ""):
                    choice = ""
                    decision_rt = decision_timeout_duration  # Use actual timeout duration, not hardcoded 2.0
                    decision_timed_out = True
                    # Store in globals for EndRoutine
                    globals()['decision_timed_out'] = True
                    globals()['decision_rt'] = decision_timeout_duration
                    globals()['decision_choice_time'] = None  # No choice made
                    print(f"Decision {decision_index+1}: No response within {decision_timeout_duration:.1f} seconds")
                continueRoutine = False
        except:
            decision_timed_out = False

        # Only check for keys if we're past the ignore window AND not timed out
        if not decision_timed_out:
            current_time = time.time()
            if current_time >= ignore_keys_until:
                # Check for keyboard input (keys 1 or 3)
                try:
                    keys = event.getKeys(keyList=['1', '3', 'num_1', 'num_3'])
                    for key in keys:
                        # Normalize key names (handle both '1' and 'num_1' formats)
                        if key == 'num_1' or key == '1':
                            # Key 1: Choose left image
                            choice = "left"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            sc = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
                            decision_choice_time = sc.getTime() if sc else None
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            globals()['decision_choice_time'] = decision_choice_time
                            print(f"Decision {decision_index+1}: Chose left (key 1, RT={decision_rt:.2f}s, scanner_time={decision_choice_time})")
                            continueRoutine = False
                            # Clear events after processing
                            try:
                                event.clearEvents()
                            except:
                                pass
                            break
                        elif key == 'num_3' or key == '3':
                            # Key 3: Choose right image
                            choice = "right"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            sc = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
                            decision_choice_time = sc.getTime() if sc else None
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            globals()['decision_choice_time'] = decision_choice_time
                            print(f"Decision {decision_index+1}: Chose right (key 3, RT={decision_rt:.2f}s, scanner_time={decision_choice_time})")
                            continueRoutine = False
                            # Clear events after processing
                            try:
                                event.clearEvents()
                            except:
                                pass
                            break
                except (NameError, AttributeError):
                    # Fallback: Check for mouse click (using mouse_2 and correct image components)
                    if 'mouse_2' in locals() and 'image_left_left' in locals() and 'image_right_right' in locals():
                        if mouse_2.isPressedIn(image_left_left):
                            choice = "left"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            sc = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
                            decision_choice_time = sc.getTime() if sc else None
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            globals()['decision_choice_time'] = decision_choice_time
                            print(f"Decision {decision_index+1}: Chose left (mouse, RT={decision_rt:.2f}s)")
                            continueRoutine = False
                        elif mouse_2.isPressedIn(image_right_right):
                            choice = "right"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            sc = getattr(thisExp, 'scanner_clock', None) or globals().get('scanner_clock', None)
                            decision_choice_time = sc.getTime() if sc else None
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            globals()['decision_choice_time'] = decision_choice_time
                            print(f"Decision {decision_index+1}: Chose right (mouse, RT={decision_rt:.2f}s)")
                            continueRoutine = False
      End Routine:
        # Get decision_index and decision_block from globals
        decision_index = globals().get('decision_index', 0)
        decision_block = globals().get('decision_block', [])

        # Get choice, decision_rt, and decision_timed_out from globals (set in EachFrame)
        choice = globals().get('choice', "")
        # Response limit (seconds): global default
        decision_response_limit = globals().get('DECISION_TIMEOUT_DURATION', 2.0)
        decision_rt = globals().get('decision_rt', None)
        decision_timed_out = globals().get('decision_timed_out', False)

        # Get leftFile and rightFile from current trial
        if decision_block:
            trial_idx = decision_index % len(decision_block)
            current = decision_block[trial_idx]
            # Get actual left/right files from BeginRoutine (which maintains positions from individual presentations)
            # But we need to recalculate them here too, or get from globals
            firstFile = current.get("firstFruit", "")
            firstSide = current.get("firstSide", "")
            secondFruit = current.get("secondFruit", "")

            # Recalculate leftFile and rightFile based on where fruits appeared individually
            if firstSide == "left":
                leftFile = firstFile
                rightFile = secondFruit
            else:  # firstSide == "right"
                leftFile = secondFruit
                rightFile = firstFile

            # Get correct side from globals (recalculated in BeginRoutine based on actual positions)
            correct = globals().get('decision_correct_side', current.get("correct", ""))
        else:
            leftFile = "images/blank.png"
            rightFile = "images/blank.png"
            firstFile = ""
            firstSide = ""
            correct = ""

        # Determine correctness
        was_correct = (choice == correct) if choice else False

        # Decision RT value (seconds)
        # If timed out OR no choice was recorded, treat as timeout and set RT to max response limit
        if decision_timed_out or (not choice):
            decision_timed_out = True
            decision_rt_value = decision_response_limit
        else:
            decision_rt_value = decision_rt if decision_rt is not None else 0.0
        decision_rt_ms = int(decision_rt_value * 1000)

        # Timeout screen duration (seconds): 1.5 if timed out, else 0
        timeout_screen_duration = globals().get('TIMEOUT_SCREEN_DURATION', 1.5)
        decision_timeout_screen_duration = timeout_screen_duration if decision_timed_out else 0.0
        globals()['decision_timeout_duration'] = decision_timeout_screen_duration
        print(f"DEBUG decisionMakingEndRoutine: decision_timed_out={decision_timed_out}, decision_timeout_screen_duration={decision_timeout_screen_duration}")

        # Log the decision data
        thisExp.addData("decision_trial", decision_index + 1)
        thisExp.addData("leftFruit", leftFile)
        thisExp.addData("rightFruit", rightFile)
        thisExp.addData("firstFruit", firstFile if firstFile else "")
        thisExp.addData("firstSide", firstSide if firstSide else "")
        thisExp.addData("choice", choice)
        thisExp.addData("correctSide", correct)
        thisExp.addData("was_correct", was_correct)
        thisExp.addData("decision_rt", decision_rt_value)
        thisExp.addData("decision_timed_out", decision_timed_out)
        thisExp.addData("decision_timeout_duration", decision_timeout_screen_duration)

        # Log decision trial to CSV
        try:
            # Extract fruit names from file paths
            # Use string operations instead of os.path for PsychoPy compatibility
            if leftFile:
                left_fruit_name = str(leftFile).replace('\\', '/').split('/')[-1].replace('.png', '')
            else:
                left_fruit_name = "unknown"

            if rightFile:
                right_fruit_name = str(rightFile).replace('\\', '/').split('/')[-1].replace('.png', '')
            else:
                right_fruit_name = "unknown"

            # Get fruit numerical IDs
            fruit_to_num = globals().get('fruit_to_num', {})
            left_stimulus_num = fruit_to_num.get(left_fruit_name, 0)
            right_stimulus_num = fruit_to_num.get(right_fruit_name, 0)

            # Get fruit average points (baselines)
            # We need to get these from the fruit_values or decision_block
            decision_block = globals().get('decision_block', [])
            left_avg = 0
            right_avg = 0
            if decision_block:
                # Use modulo to get the correct trial (cycles if needed)
                trial_idx = decision_index % len(decision_block)
                current = decision_block[trial_idx]
                left_avg = current.get('leftVal', 0)
                right_avg = current.get('rightVal', 0)

            # Extract first fruit information
            if firstFile:
                first_fruit_name = str(firstFile).replace('\\', '/').split('/')[-1].replace('.png', '')
            else:
                first_fruit_name = "unknown"
            first_side_value = firstSide if firstSide else ""

            # Determine block ID (1=before showing points explicitly, 2=after showing points explicitly)
            # For now, we'll use 1 as default (you can modify this based on your experiment structure)
            block_id = 1  # TODO: Update this based on your experiment structure
            block_name = "implicit"  # TODO: Update this based on your experiment structure

            # Determine choice as numerical ID (left_stimulus_num or right_stimulus_num)
            # The choice should be the numerical ID of the chosen fruit
            choice_num = left_stimulus_num if choice == "left" else (right_stimulus_num if choice == "right" else "")

            # Defer CSV logging until after ITI durations are computed (so we can log ITI_1/2/3)
        except Exception as e:
            print(f"Error logging decision data: {e}")

        # Calculate ITI 3 duration (crosshair after decision)
        # Per stimulus diagram (same as day 1):
        # - Response < 2s: crosshair = (2 - RT) + ITI_base  [remaining response window + base ITI 2/3/4]
        # - No response: Time out screen, then crosshair = ITI_base - timeout_screen
        import random
        timeout_screen_duration = globals().get('TIMEOUT_SCREEN_DURATION', 1.5)
        decision_response_limit = globals().get('DECISION_TIMEOUT_DURATION', 2.0)
        iti3_total_values = globals().get('DECISION_ITI3_VALUES', [2, 3, 4])
        iti3_total = random.choice(iti3_total_values)
        iti3_base = iti3_total  # Base ITI (2/3/4 s) chosen for this trial

        if decision_timed_out:
            iti3_duration = max(0.0, float(iti3_total) - timeout_screen_duration)
            iti3_remaining_response = 0.0
            print(f"ITI 3 (timeout): crosshair={iti3_duration:.2f}s (ITI_base={iti3_base}s - timeout={timeout_screen_duration}s)")
        else:
            # Crosshair = (2 - RT) + ITI_base  [fill remaining 2s window + base]
            iti3_remaining_response = max(0.0, decision_response_limit - decision_rt_value)
            iti3_duration = iti3_remaining_response + iti3_total
            print(f"ITI 3 (responded): RT={decision_rt_value:.3f}s, (2-RT)={iti3_remaining_response:.3f}s + ITI_base={iti3_base}s = crosshair={iti3_duration:.3f}s")

        globals()['iti3_duration'] = iti3_duration

        # Log ITI durations
        iti1_duration = globals().get('iti1_duration', None)
        iti2_duration = globals().get('iti2_duration', None)
        # Fallback (prevents logging 0 when ITI routines were skipped/misconfigured in Builder)
        if iti1_duration in (None, 0):
            import random
            iti1_duration = random.choice(globals().get('DECISION_ITI12_VALUES', [1, 2, 3]))
            globals()['iti1_duration'] = iti1_duration
        if iti2_duration in (None, 0):
            import random
            iti2_duration = random.choice(globals().get('DECISION_ITI12_VALUES', [1, 2, 3]))
            globals()['iti2_duration'] = iti2_duration
        thisExp.addData("iti1_duration", iti1_duration)
        thisExp.addData("iti2_duration", iti2_duration)
        thisExp.addData("iti3_duration", iti3_duration)
        thisExp.addData("iti3_base", iti3_base)
        thisExp.addData("decision_response_time", decision_rt_value)

        # Log decision trial to CSV (includes ITIs and timeout metadata)
        try:
            data_logger = globals().get('data_logger', None)
            if data_logger:
                decision_response_limit_s = globals().get('DECISION_TIMEOUT_DURATION', 2.0)
                timeout_screen_duration_s = globals().get('decision_timeout_duration', 0.0)
                s1 = globals().get('stimulus1_onset_time')
                s2 = globals().get('stimulus2_onset_time')
                both_ = globals().get('both_fruits_onset_time')
                choice_t = globals().get('decision_choice_time')
                iti3_crosshair_expected = iti3_base + (2000 - decision_rt_ms) / 1000.0 if not decision_timed_out else iti3_duration
                print(f"DEBUG decisionMakingEnd: trial={decision_index+1} stim1={s1} stim2={s2} both={both_} choice_t={choice_t}")
                print(f"DEBUG decisionMakingEnd: iti3_base={iti3_base} iti3_duration={iti3_duration} RT_ms={decision_rt_ms} formula_check={iti3_base}+(2000-{decision_rt_ms})/1000={iti3_crosshair_expected:.3f}")
                if s2 is not None and s2 < 0.1:
                    print(f"DEBUG decisionMakingEnd: stimulus2_onset NEAR ZERO - passed to log_decision_trial")
                data_logger.log_decision_trial(
                    trial_num=decision_index + 1,
                    block_id=block_id,
                    block_name=block_name,
                    first_stimulus_id=first_fruit_name,
                    first_stimulus_side=first_side_value,
                    left_stimulus_id=left_fruit_name,
                    right_stimulus_id=right_fruit_name,
                    left_stimulus_num=left_stimulus_num,
                    right_stimulus_num=right_stimulus_num,
                    left_avg_points=left_avg,
                    right_avg_points=right_avg,
                    choice=choice_num if choice_num else "",
                    reaction_time_ms=decision_rt_ms,
                    iti1_duration=iti1_duration,
                    iti2_duration=iti2_duration,
                    iti3_base=iti3_base,
                    iti3_duration=iti3_duration,
                    decision_timed_out=decision_timed_out,
                    decision_response_limit_s=decision_response_limit_s,
                    decision_timeout_screen_duration_s=timeout_screen_duration_s,
                    stimulus1_onset_time=s1,
                    stimulus2_onset_time=s2,
                    both_fruits_onset_time=both_,
                    choice_time=choice_t,
                )
        except Exception as e:
            print(f"Error logging decision data (with ITIs): {e}")

        print(f"Decision {decision_index + 1}: {choice} (correct: {correct}, accurate: {was_correct}, RT: {decision_rt_value:.2f}s, timed_out: {decision_timed_out})")
        print(f"Decision EndRoutine: RT={decision_rt_value:.3f}s={decision_rt_ms}ms, responded_in_time={not decision_timed_out}, timed_out={decision_timed_out}")

        # Move to next trial
        decision_index += 1
        # Store in globals to ensure it persists
        globals()['decision_index'] = decision_index

        # Check if we're done with decision trials
        # IMPORTANT: Let PsychoPy loop's nReps control when to stop
        # Only end the loop if we've reached the loop's nReps OR run out of decision_block trials
        decision_block = globals().get('decision_block', [])
        total_decision_trials = len(decision_block)

        # Get loop nReps to determine when to stop
        loop_nReps = None
        try:
            if 'currentLoop' in locals() and hasattr(currentLoop, 'nReps') and currentLoop.nReps:
                loop_nReps = int(currentLoop.nReps)
            elif 'decisionLoop' in globals() and hasattr(decisionLoop, 'nReps') and decisionLoop.nReps:
                loop_nReps = int(decisionLoop.nReps)
        except:
            pass

        # Only end loop if we've reached nReps OR run out of decision_block trials
        # Don't end prematurely - let the loop run for nReps iterations
        should_end = False
        if loop_nReps is not None:
            # End when we've completed the number of trials specified by nReps
            if decision_index >= loop_nReps:
                print(f"Decision loop complete: {decision_index}/{loop_nReps} trials completed (nReps reached)")
                should_end = True
            elif decision_index >= total_decision_trials:
                # Ran out of decision_block trials before reaching nReps
                print(f"WARNING: Ran out of decision_block trials ({total_decision_trials}) before reaching nReps ({loop_nReps})")
                should_end = True
        else:
            # Fallback: check against decision_block length if nReps not available
            if decision_index >= total_decision_trials:
                print(f"All decision_block trials complete ({total_decision_trials} trials)")
                should_end = True

        # Only end and save if we should
        if should_end:
            # Save decision data before ending
            try:
                data_logger = globals().get('data_logger', None)
                if data_logger:
                    block_num = 3  # TODO: Update based on your experiment structure
                    block_name = "implicit"  # TODO: Update based on your experiment structure
                    data_logger.save_decision_data(block_num=block_num, block_name=block_name)
            except Exception as e:
                print(f"Error saving decision data: {e}")

            # Only end the loop if we should
            if 'decisionLoop' in locals():
                decisionLoop.finished = True
            elif 'currentLoop' in locals():
                currentLoop.finished = True
  Routine decisionITI3
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti3_duration
      text = +
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    CodeComponent code_15
      Code Type = Py
      Begin Routine:
        # ITI 3 - Crosshair screen (duration: (2-RT)+ITI when responded, full ITI when timed out)
        # Duration is set in decisionMaking End Routine as iti3_duration
        # NOTE: iti3_duration is in globals() - must read explicitly so Builder's $iti3_duration uses correct value each trial
        iti3_duration = globals().get('iti3_duration', 2.0)
        decision_timed_out = globals().get('decision_timed_out', False)
        print(f"DEBUG ITI3 Begin: iti3_duration={iti3_duration:.3f} (from globals)")

        # Hide previous text and fruits
        if 'text_question_1' in locals():
            text_question_1.opacity = 0
            text_question_1.setAutoDraw(False)

        if 'image_left_left' in locals():
            image_left_left.opacity = 0
            image_left_left.setAutoDraw(False)

        if 'image_right_right' in locals():
            image_right_right.opacity = 0
            image_right_right.setAutoDraw(False)

        # Show crosshair
        if 'text_17' in locals():
            text_17.text = "+"  # Crosshair symbol
            text_17.opacity = 1
            text_17.setAutoDraw(True)

        print(f"ITI3 Begin: showing crosshair for iti3_duration={iti3_duration:.3f}s (timed_out={decision_timed_out})")
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  Routine keyInstructions
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Pressing "1" will shift the slider value leftwards by a value of 5. Pressing "3" will shift the slider value rightwards, also by a value of 5.

        Pressing "2" will confirm your answer.

        Press C to continue.
    KeyboardComponent key_resp_19
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blockTransition
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    TextComponent text_block_transition
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_transition
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_16
      Code Type = Py
      Begin Routine:
        # Block transition screen - shown between first and second block
        # Shows "You completed the first block. Press C to move on to next block."

        # Check if we should show this screen (only after first block completes, and only once)
        show_block_transition = globals().get('show_block_transition', False)
        ready_for_block2_setup = globals().get('ready_for_block2_setup', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Only show if:
        # 1. Flag is set to True
        # 2. Block 2 setup hasn't been completed yet (ready_for_block2_setup = False)
        # 3. We're still in or just finished the first block (learning_block_index < trials_per_block)
        if not show_block_transition or ready_for_block2_setup or learning_block_index >= trials_per_block:
            # Don't show transition screen - skip this routine
            if not show_block_transition:
                print("Skipping block transition screen (flag not set)")
            elif ready_for_block2_setup:
                print("Skipping block transition screen (block 2 setup already completed)")
            elif learning_block_index >= trials_per_block:
                print(f"Skipping block transition screen (already past first block: index={learning_block_index}, trials_per_block={trials_per_block})")
            continueRoutine = False
        else:
            # Show the transition screen
            transitionText = "You completed the first block.\n\nPress C to move on to next block."

            # Set the text component (make sure component name matches your Builder setup)
            if 'text_block_transition' in locals():
                text_block_transition.text = transitionText
                text_block_transition.opacity = 1
                text_block_transition.setAutoDraw(True)
                print("Showing block transition screen")
            else:
                print("WARNING: text_block_transition component not found!")

            # Clear any previous key presses IMMEDIATELY to prevent carryover
            try:
                event.clearEvents()
                # Also clear any keyboard component buffers
                if 'key_resp_transition' in locals() and hasattr(key_resp_transition, 'keys'):
                    key_resp_transition.keys = []
            except:
                pass

            # Set a timestamp to ignore any keys pressed before this routine started
            import time
            globals()['block_transition_start_time'] = time.time()
            print(f"Block transition: Routine started at {globals()['block_transition_start_time']}, cleared key buffer")
      Each Frame:
        # Block transition screen - wait for key press 2 to continue

        # Only show if flag is set (double-check)
        show_block_transition = globals().get('show_block_transition', False)
        if not show_block_transition:
            continueRoutine = False
        else:
            # Check for key press 2 (or num_2)
            # Only accept keys pressed AFTER this routine started (ignore carryover)
            import time
            routine_start_time = globals().get('block_transition_start_time', time.time())
            current_time = time.time()

            # Only process keys if at least 0.1 seconds have passed since routine started
            # This prevents using keys that were pressed before the routine started
            if current_time - routine_start_time >= 0.1:
                try:
                    keys = event.getKeys(keyList=['2', 'num_2'])
                    if '2' in keys or 'num_2' in keys:
                        # User pressed 2, continue to next block
                        print("Key 2 pressed - moving to next block")
                        # Reset the flag so it doesn't show again
                        globals()['show_block_transition'] = False
                        # Set flag to indicate we're ready for block 2 setup
                        globals()['ready_for_block2_setup'] = True
                        print(f"DEBUG: Set ready_for_block2_setup = True")
                        continueRoutine = False
                        event.clearEvents()
                except (NameError, AttributeError):
                    # Fallback: check keyboard component if event.getKeys doesn't work
                    if 'key_resp_transition' in locals() and hasattr(key_resp_transition, 'keys'):
                        if key_resp_transition.keys and len(key_resp_transition.keys) > 0:
                            key = key_resp_transition.keys[0]
                            if key == '2' or key == 'num_2':
                                print("Key 2 pressed (via keyboard component) - moving to next block")
                                # Reset the flag so it doesn't show again
                                globals()['show_block_transition'] = False
                                # Set flag to indicate we're ready for block 2 setup
                                globals()['ready_for_block2_setup'] = True
                                print(f"DEBUG: Set ready_for_block2_setup = True (keyboard component)")
                                continueRoutine = False
                                key_resp_transition.keys = []
      End Routine:
        # Hide block transition text when routine ends
        if 'text_block_transition' in locals():
            text_block_transition.setAutoDraw(False)
            text_block_transition.opacity = 0
            print("Block transition text hidden")

        # Clear any remaining key presses
        try:
            event.clearEvents()
        except:
            pass

        # IMPORTANT: Reset the show_block_transition flag to False so it doesn't show again
        # This ensures it only shows once after the first block
        globals()['show_block_transition'] = False

        # Ensure the flag is set correctly
        globals()['ready_for_block2_setup'] = True
        print("Block transition ended, ready for block 2 setup")
        print("  - show_block_transition set to False (will not show again)")
        print("  - ready_for_block2_setup set to True")
  Routine thankYou
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You completed the experiment!

        Thank you for participating!

        Press C to end.
    KeyboardComponent key_resp_8
      allowedKeys = 'c', 'C'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine decisionTimeout
    RoutineSettingsComponent decisionTimeout
      stopVal [duration (s)] = $decision_timeout_duration
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    TextComponent text_decision_timeout
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $decision_timeout_duration
      text = Time out
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    CodeComponent code_17
      Code Type = Py
      Begin Routine:
        # Decision timeout screen - shows "Time out" message
        # Duration is exactly 1.5 seconds (set in Builder or dynamically)
        # Only show if decision_timeout_duration > 0

        decision_timeout_duration = globals().get('decision_timeout_duration', 0)
        decision_timed_out = globals().get('decision_timed_out', False)

        # DEBUG: Print timeout status
        print(f"DEBUG decisionTimeout: decision_timeout_duration={decision_timeout_duration}, decision_timed_out={decision_timed_out}")

        if decision_timeout_duration > 0:
            if 'text_decision_timeout' in locals():
                text_decision_timeout.text = "Time out"
                text_decision_timeout.opacity = 1
                text_decision_timeout.setAutoDraw(True)
                print("Showing decision timeout screen (1.5 seconds)")
            else:
                print("WARNING: text_decision_timeout component not found!")
        else:
            # No timeout - skip this screen (duration should be 0)
            print("Skipping decision timeout screen (no timeout occurred, decision_timeout_duration=0)")
            if 'text_decision_timeout' in locals():
                text_decision_timeout.opacity = 0
                text_decision_timeout.setAutoDraw(False)
      Each Frame:
        # Decision timeout screen - just displays "Time out" message, no interaction needed
        # The duration is controlled by decision_timeout_duration (1.5 seconds if timeout occurred, 0 otherwise)

        # Double-check that we should be showing this (safety check)
        decision_timeout_duration = globals().get('decision_timeout_duration', 0)
        if decision_timeout_duration <= 0:
            # Shouldn't be showing - skip
            continueRoutine = False
      End Routine:
        # Hide timeout text
        if 'text_decision_timeout' in locals():
            text_decision_timeout.setAutoDraw(False)
            text_decision_timeout.opacity = 0
  Routine scannerWait
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    ImageComponent waitImage
      image = images/randomImage.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine practiceIntro
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    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        # Practice introduction screen
        # Shows "We will run a short practice task now. Press 2 to continue"
        # Component: text_practice_intro (or similar text component)

        # Clear any previous key presses
        try:
            event.clearEvents()
        except:
            pass

        # Display practice introduction text
        if 'text_practice_intro' in locals():
            text_practice_intro.text = "We will run a short practice task now. Press C to continue"
            text_practice_intro.opacity = 1
            text_practice_intro.setAutoDraw(True)
            print("Practice introduction screen displayed")
        else:
            print("WARNING: text_practice_intro component not found!")
      Each Frame:
        # Practice introduction - wait for key press '2' to continue
        try:
            keys = event.getKeys(keyList=['2', 'num_2'])
            if keys:
                # Key 2 pressed - continue to practice trials
                print("Practice introduction: Key 2 pressed, continuing to practice trials")
                continueRoutine = False
                event.clearEvents()
        except:
            pass
      End Routine:
        # Hide practice introduction text
        if 'text_practice_intro' in locals():
            text_practice_intro.setAutoDraw(False)
            text_practice_intro.opacity = 0

        # Clear any remaining key presses
        try:
            event.clearEvents()
        except:
            pass
    TextComponent text_practice_intro
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = We will run a short practice test now. Press C to continue.
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    KeyboardComponent key_resp_9
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine practiceTrial
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    CodeComponent code_19
      Code Type = Py
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      Begin Routine:
        # Practice trial - similar to regular trial but with shorter durations
        # Get practice_block_index from globals (or initialize if first practice trial)
        practice_block_index = globals().get('practice_block_index', -1)
        practice_block_index += 1
        globals()['practice_block_index'] = practice_block_index

        # Get practice_block from globals
        practice_block = globals().get('practice_block', [])

        # Debug: Print practice block info
        print(f"DEBUG: practice_block_index={practice_block_index}, practice_block length={len(practice_block)}")
        if practice_block:
            print(f"DEBUG: practice_block contents: {[t['fruit'] for t in practice_block]}")
        else:
            print("ERROR: practice_block is empty! Creating fallback practice block.")
            # Fallback: Create a simple practice block if it doesn't exist
            image_dir = "images/"
            practice_block = [
                {"block": "gain", "fruit": image_dir + "dog.png", "baseline": 50, "true_value": 30},
                {"block": "loss", "fruit": image_dir + "cat.png", "baseline": -50, "true_value": -30},
                {"block": "gain", "fruit": image_dir + "rabbit.png", "baseline": 50, "true_value": 50}
            ]
            globals()['practice_block'] = practice_block
            print(f"Created fallback practice block with {len(practice_block)} trials")

        # Get current practice trial
        if practice_block and len(practice_block) > 0 and practice_block_index >= 0 and practice_block_index < len(practice_block):
            current = practice_block[practice_block_index]
            fruitFile = current["fruit"]
            trueVal = current["true_value"]
            baselineR = current["baseline"]
            blockType = current["block"]
            idx = practice_block_index + 1
            print(f"Practice trial {idx}/3: {fruitFile}, value={trueVal}")
        else:
            # Fallback - use blank
            fruitFile = "images/blank.png"
            trueVal = 0
            baselineR = 0
            blockType = "practice"
            idx = 0
            print(f"WARNING: Practice trial {practice_block_index} out of range")

        # Clear any keys from previous routines
        try:
            event.clearEvents()
        except:
            pass

        # Set the fruit image - initialize it properly to avoid tStartRefresh None error
        # This matches the regular trial approach
        if 'image_4' in locals():
            # Set the image first
            image_4.setImage(fruitFile)
            image_4.opacity = 1
            # Initialize by setting autodraw - this ensures tStartRefresh gets set
            image_4.setAutoDraw(True)
            # Reset debug flag for EachFrame
            if hasattr(image_4, '_shown_debug'):
                del image_4._shown_debug
            print(f"Practice trial: Set image to {fruitFile} with opacity {image_4.opacity}")

        # Reset slider to 0
        if 'slider_3' in locals():
            slider_3.reset()
            slider_3.setRating(0)
            print("Practice trial: Slider reset to 0")

        # Initialize timing variables (shorter timeout for practice - 6 seconds)
        import time
        trial_start_time = time.time()
        response_time = None
        trial_timed_out = False
        responded_in_time = False

        # Store in globals
        globals()['trial_start_time'] = trial_start_time
        globals()['response_time'] = None
        globals()['trial_timed_out'] = False
        globals()['responded_in_time'] = False

        # Store trial variables in globals for use in other routines (like actualPoints)
        globals()['trueVal'] = trueVal
        globals()['fruitFile'] = fruitFile
        globals()['blockType'] = blockType
        globals()['baselineR'] = baselineR

        # Practice trials use shorter timeout (6 seconds instead of 8)
        globals()['PRACTICE_TIMEOUT_SECONDS'] = 6.0
      Each Frame:
        # Practice trial - check for response (shorter timeout: 6 seconds)
        # Using keys 1/3: 1 = left (decrease), 2 = continue, 3 = right (increase)
        import time

        # Get fruitFile from locals or globals
        if 'fruitFile' not in locals():
            fruitFile = globals().get('fruitFile', 'images/blank.png')

        # Show the fruit image - FORCE it to be visible (match regular trial approach)
        if 'image_4' in locals() and fruitFile and fruitFile != 'images/blank.png' and fruitFile != '':
            # Set the image and make it visible every frame
            image_4.setImage(fruitFile)
            image_4.opacity = 1.0  # Force opacity to 1.0
            image_4.setAutoDraw(True)  # Force autodraw to ensure it's drawn
            # Debug: print once per trial that image is being shown
            if not hasattr(image_4, '_shown_debug'):
                print(f"DEBUG: Practice showing image {fruitFile} with opacity {image_4.opacity}, autodraw={image_4.status}")
                image_4._shown_debug = True
        elif 'image_4' in locals():
            image_4.opacity = 0
            image_4.setAutoDraw(False)

        # Display current slider value
        if 'slider_3' in locals():
            current_value = slider_3.getRating()
            # Handle None values - slider might return None initially
            if current_value is not None:
                try:
                    current_value_int = int(current_value)
                    if 'text_slider_value' in locals():
                        text_slider_value.text = f"Current rating: {current_value_int}"
                    elif 'text_rating' in locals():
                        text_rating.text = f"Current rating: {current_value_int}"
                except (ValueError, TypeError):
                    # If conversion fails, just skip updating the text
                    pass

        # Handle keyboard input for slider controls
        try:
            keys = event.getKeys(keyList=['1', '2', '3', 'num_1', 'num_2', 'num_3'])
        except:
            keys = []

        for key in keys:
            # Normalize key names
            if key == 'num_1' or key == '1':
                # Key 1: Move slider left by 5 points
                if 'slider_3' in locals():
                    current_rating = slider_3.getRating()
                    if current_rating is None:
                        current_rating = 0
                    new_rating = current_rating - 5
                    slider_3.setRating(new_rating)
                    print(f"Practice: Slider moved left (key 1): {current_rating} -> {new_rating}")

            elif key == 'num_3' or key == '3':
                # Key 3: Move slider right by 5 points
                if 'slider_3' in locals():
                    current_rating = slider_3.getRating()
                    if current_rating is None:
                        current_rating = 0
                    new_rating = current_rating + 5
                    slider_3.setRating(new_rating)
                    print(f"Practice: Slider moved right (key 3): {current_rating} -> {new_rating}")

            elif key == 'num_2' or key == '2':
                # Key 2: Submit answer
                trial_start_time = globals().get('trial_start_time', time.time())
                response_time = time.time() - trial_start_time

                PRACTICE_TIMEOUT_SECONDS = globals().get('PRACTICE_TIMEOUT_SECONDS', 6.0)

                if response_time <= PRACTICE_TIMEOUT_SECONDS:
                    responded_in_time = True
                    trial_timed_out = False
                    print(f"Practice: Answer submitted (key 2) in {response_time:.2f} seconds")
                else:
                    responded_in_time = False
                    trial_timed_out = True
                    print(f"Practice: Answer submitted (key 2) in {response_time:.2f} seconds (over limit)")

                globals()['response_time'] = response_time
                globals()['responded_in_time'] = responded_in_time
                globals()['trial_timed_out'] = trial_timed_out

                continueRoutine = False
                event.clearEvents()
                break

        # Check for timeout (6 seconds for practice)
        try:
            trial_start_time = globals().get('trial_start_time', time.time())
            PRACTICE_TIMEOUT_SECONDS = globals().get('PRACTICE_TIMEOUT_SECONDS', 6.0)
            responded_in_time = globals().get('responded_in_time', False)

            elapsed_time = time.time() - trial_start_time

            if elapsed_time >= PRACTICE_TIMEOUT_SECONDS and not responded_in_time:
                trial_timed_out = True
                response_time = PRACTICE_TIMEOUT_SECONDS
                responded_in_time = False

                globals()['response_time'] = response_time
                globals()['responded_in_time'] = responded_in_time
                globals()['trial_timed_out'] = trial_timed_out

                print(f"Practice: Trial timed out at {PRACTICE_TIMEOUT_SECONDS} seconds")
                continueRoutine = False
                event.clearEvents()
        except:
            pass
      End Routine:
        # Get response data from practice trial
        if 'slider_3' in locals():
            rating = slider_3.getRating()
            if rating is None:
                rating = 0
            rt = slider_3.getRT()
        else:
            rating = 0
            rt = None

        # Get response_time, responded_in_time, and trial_timed_out from globals
        response_time = globals().get('response_time', None)
        responded_in_time = globals().get('responded_in_time', False)
        trial_timed_out = globals().get('trial_timed_out', False)

        # Use response_time if available, otherwise use slider RT
        actual_response_time = response_time if response_time is not None else rt

        rt_str = f"{actual_response_time:.3f}s" if actual_response_time else "N/A"
        print(f"Practice trial EndRoutine: RT={rt_str}, responded_in_time={responded_in_time}, timed_out={trial_timed_out}")

        # Log practice trial data (optional - you may want to log this separately)
        thisExp.addData("practice_trial", True)
        thisExp.addData("practice_block", blockType if 'blockType' in locals() else "practice")
        thisExp.addData("practice_fruit", fruitFile if 'fruitFile' in locals() else "")
        thisExp.addData("practice_rating", rating)
        thisExp.addData("practice_rt", actual_response_time if actual_response_time else None)
        thisExp.addData("practice_true_value", trueVal if 'trueVal' in locals() else 0)
        thisExp.addData("practice_responded_in_time", responded_in_time)
        thisExp.addData("practice_timed_out", trial_timed_out)
    ImageComponent image_4
      pos = (0, 0.17)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SliderComponent slider_3
      font = Noto Sans
      forceEndRoutine = False
      granularity = 5
      initVal = 0
      labels = (-100, -80, -60, -40, -20, 0, 20, 40, 60, 80, 100)
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1, 0.075)
      startVal [time (s)] = 0
      styles = slider
      ticks = (-100, -80, -60, -40, -20, 0, 20, 40, 60, 80, 100)
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  Routine taskStartSoon
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    TextComponent text_task_start_soon
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The task will start soon.

        Press C to continue.
    KeyboardComponent key_resp_10
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_20
      Code Type = Py
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      Begin Routine:
        # "Task will start soon. Press 2 to continue" screen
        # Component: text_task_start_soon (or similar text component)
        # This should ONLY show ONCE at the start of Block 1, NOT after every trial

        # Check if Block 1 setup has already been completed
        block1_scanner_sync_complete = globals().get('block1_scanner_sync_complete', False)
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)

        # Only show taskStartSoon ONCE at the start of Block 1
        # Skip if: Block 1 scanner sync already done, OR block 2 setup is complete, OR we've already started trials (learning_block_index >= 0 means at least one trial has started)
        print(f"DEBUG taskStartSoon: block1_scanner_sync_complete={block1_scanner_sync_complete}, block2_setup_complete={block2_setup_complete}, learning_block_index={learning_block_index}")

        if block1_scanner_sync_complete or block2_setup_complete or learning_block_index >= 0:
            print(f"Skipping taskStartSoon (block1_scanner_sync_complete={block1_scanner_sync_complete}, block2_setup_complete={block2_setup_complete}, learning_block_index={learning_block_index})")
            continueRoutine = False
        else:
            # Clear any previous key presses
            try:
                event.clearEvents()
            except:
                pass

            # Display task start message
            if 'text_task_start_soon' in locals():
                text_task_start_soon.text = "The task will start soon. Press C to continue"
                text_task_start_soon.opacity = 1
                text_task_start_soon.setAutoDraw(True)
                print("Task start soon screen displayed")
            else:
                print("WARNING: text_task_start_soon component not found!")
      Each Frame:
        # Task start soon - wait for key press '2' to continue
        # Check if Block 1 setup has already been completed (shouldn't happen, but safety check)
        block1_scanner_sync_complete = globals().get('block1_scanner_sync_complete', False)
        if block1_scanner_sync_complete:
            continueRoutine = False
        else:
            try:
                keys = event.getKeys(keyList=['2', 'num_2'])
                if keys:
                    # Key 2 pressed - continue to scanner sync
                    print("Task start soon: Key 2 pressed, continuing to scanner sync")
                    continueRoutine = False
                    event.clearEvents()
            except:
                pass
      End Routine:
        # Hide task start soon text
        if 'text_task_start_soon' in locals():
            text_task_start_soon.setAutoDraw(False)
            text_task_start_soon.opacity = 0

        # Clear any remaining key presses
        try:
            event.clearEvents()
        except:
            pass
  Routine scannerSync
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    TextComponent text_scanner_wait
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for the scanner to start...
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    KeyboardComponent key_resp_11
      allowedKeys = '5', 'num_5', 'num5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Py
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      Begin Routine:
        # MRI Scanner sync - wait for scanner trigger (key '5')
        # Component: text_scanner_wait (or similar text component)
        # This should ONLY show ONCE at the start of Block 1, NOT after every trial

        # Check if Block 1 scanner sync has already been completed
        block1_scanner_sync_complete = globals().get('block1_scanner_sync_complete', False)
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)

        # Only show scannerSync ONCE at the start of Block 1
        # Skip if: Block 1 scanner sync already done, OR block 2 setup is complete, OR we've already started trials (learning_block_index >= 0 means at least one trial has started)
        print(f"DEBUG scannerSync: block1_scanner_sync_complete={block1_scanner_sync_complete}, block2_setup_complete={block2_setup_complete}, learning_block_index={learning_block_index}")

        if block1_scanner_sync_complete or block2_setup_complete or learning_block_index >= 0:
            print(f"Skipping scannerSync (block1_scanner_sync_complete={block1_scanner_sync_complete}, block2_setup_complete={block2_setup_complete}, learning_block_index={learning_block_index})")
            continueRoutine = False
        else:
            # Clear any previous key presses
            try:
                event.clearEvents()
            except:
                pass

            # Display waiting message
            if 'text_scanner_wait' in locals():
                text_scanner_wait.text = "Waiting for the scanner to start..."
                text_scanner_wait.opacity = 1
                text_scanner_wait.setAutoDraw(True)
                print("Scanner sync: Waiting for trigger '5' from MRI scanner (Block 1)")
            else:
                print("WARNING: text_scanner_wait component not found!")
      Each Frame:
        # Scanner sync - wait for MRI scanner trigger (key '5')
        # The MRI sends '5' when it's ready
        # Check if Block 1 scanner sync has already been completed (shouldn't happen, but safety check)
        block1_scanner_sync_complete = globals().get('block1_scanner_sync_complete', False)
        if block1_scanner_sync_complete:
            continueRoutine = False
        else:
            try:
                keys = event.getKeys(keyList=['5', 'num_5'])
                if keys:
                    # Scanner trigger received - continue to next screen
                    print("Scanner sync: Trigger '5' received from MRI scanner, continuing")
                    continueRoutine = False
                    event.clearEvents()
            except:
                pass
      End Routine:
        # Create/reset scanner_clock when Block 1 scanner sync completes (user pressed 5)
        # Match day 1: globals only - create if not exists, else reset
        try:
            import psychopy.core as psychopy_core
            if 'scanner_clock' not in globals() or globals()['scanner_clock'] is None:
                globals()['scanner_clock'] = psychopy_core.Clock()
            else:
                globals()['scanner_clock'].reset()
            print("[Block 1] Scanner clock created/reset at trigger '5'")
        except Exception as e:
            print(f"WARNING: Could not create scanner_clock: {e}")
  Routine actualPoints1
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    CodeComponent code_22
      Code Type = Py
      Begin Routine:
        # Actual points screen - shows the true value
        # Duration is set dynamically based on trial response time
        # IMPORTANT: In Builder, leave the Text component's text field BLANK - code will set it

        # Get trueVal and create the text
        actual_points_text = "Actual points: 0"  # Initialize first

        # Try to get trueVal from various sources
        if 'trueVal' in locals():
            actual_points_text = f"Actual points: {trueVal:+d}"
        elif 'trueVal' in globals():
            actual_points_text = f"Actual points: {trueVal:+d}"
        else:
            # Fallback: try to get from actual_points_text if it was set in trialEndRoutine
            try:
                if 'actual_points_text' in locals():
                    pass  # Use the value that exists
                else:
                    actual_points_text = "Actual points: 0"
            except:
                actual_points_text = "Actual points: 0"

        # Set the text component (DO NOT set text in Builder - leave it blank!)
        if 'text_actual_points' in locals():
            text_actual_points.text = actual_points_text
            text_actual_points.opacity = 1
            text_actual_points.setAutoDraw(True)
            print(f"Showing actual points: {actual_points_text}")
        else:
            print("WARNING: text_actual_points component not found!")
    TextComponent text_actual_points
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine crosshair3
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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    CodeComponent code_23
      Code Type = Py
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      Begin Routine:
        # First crosshair screen - duration set dynamically based on trial response time
        # Duration is set in trialEndRoutine.py as crosshair1_duration
        # This routine will show a crosshair in the center of the screen

        # Make sure crosshair is visible (add a crosshair component in Builder)
        if 'crosshair' in locals():
            crosshair.opacity = 1
            crosshair.setAutoDraw(True)
      Each Frame:
        pass
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  Routine scannerSyncBlock2
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    CodeComponent code_25
      Code Type = Py
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      Begin Routine:
        # MRI Scanner sync Block 2 - wait for scanner trigger (key '5')
        # Only shows after first block completes (after blockTransition and taskStartSoonBlock2)
        # Component: text_scanner_wait_block2 (or similar text component)

        # Check if we should show this (only after taskStartSoonBlock2 completes, and only once)
        # taskStartSoonBlock2 sets ready_for_scanner_sync_block2 = True when user presses C
        ready_for_scanner_sync_block2 = globals().get('ready_for_scanner_sync_block2', False)
        block2_setup_complete = globals().get('block2_setup_complete', False)

        # Also check if we've already started Block 2 trials (once Block 2 has started, never show this again)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # DEBUG: Print flag states
        print(f"DEBUG scannerSyncBlock2: ready_for_scanner_sync_block2={ready_for_scanner_sync_block2}, block2_setup_complete={block2_setup_complete}, learning_block_index={learning_block_index}, trials_per_block={trials_per_block}")
        print(f"DEBUG scannerSyncBlock2: Condition check - block2_setup_complete={block2_setup_complete}, not ready={not ready_for_scanner_sync_block2}, index too low={learning_block_index < trials_per_block - 1}, index too high={learning_block_index > trials_per_block}")

        # Skip if:
        # 1. Block 2 setup already done (block2_setup_complete = True) - NEVER show again once setup is complete
        # 2. taskStartSoonBlock2 hasn't completed yet (ready_for_scanner_sync_block2 = False)
        # 3. Still in Block 1 (learning_block_index < trials_per_block - 1)
        # 4. Already well into Block 2 trials (learning_block_index > trials_per_block) - once Block 2 trials start, never show again
        # Show during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block AND ready_for_scanner_sync_block2 = True
        # NOTE: learning_block_index is 0-indexed, so after last trial of block 1, it equals trials_per_block - 1
        should_skip = block2_setup_complete or not ready_for_scanner_sync_block2 or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block
        print(f"DEBUG scannerSyncBlock2: should_skip = {should_skip}")
        if should_skip:
            globals()['scanner_block2_was_shown'] = False
            # Skip this routine
            if block2_setup_complete:
                print("Skipping scannerSyncBlock2 (block 2 setup already completed)")
            elif learning_block_index < trials_per_block - 1:
                print(f"Skipping scannerSyncBlock2 (still in Block 1, learning_block_index={learning_block_index} < trials_per_block-1={trials_per_block-1})")
            elif learning_block_index > trials_per_block:
                print(f"Skipping scannerSyncBlock2 (already in Block 2 trials, learning_block_index={learning_block_index} > trials_per_block={trials_per_block})")
            else:
                print(f"Skipping scannerSyncBlock2 (taskStartSoonBlock2 not completed yet, ready_for_scanner_sync_block2={ready_for_scanner_sync_block2})")
            continueRoutine = False
        else:
            globals()['scanner_block2_was_shown'] = True
            # We're past the first block - show the scanner sync
            # Clear any previous key presses IMMEDIATELY to prevent carryover
            try:
                event.clearEvents()
                # Also clear any keyboard component buffers
                if 'key_resp_scanner_block2' in locals() and hasattr(key_resp_scanner_block2, 'keys'):
                    key_resp_scanner_block2.keys = []
            except:
                pass

            # Set a timestamp to ignore any keys pressed before this routine started
            import time
            globals()['scannerSyncBlock2_start_time'] = time.time()
            print(f"Scanner sync Block 2: Routine started at {globals()['scannerSyncBlock2_start_time']}, cleared key buffer")

            # Display waiting message
            if 'text_scanner_wait_block2' in locals():
                text_scanner_wait_block2.text = "Waiting for the scanner to start..."
                text_scanner_wait_block2.opacity = 1
                text_scanner_wait_block2.setAutoDraw(True)
                print("Scanner sync Block 2: Waiting for trigger '5' from MRI scanner")
            else:
                print("WARNING: text_scanner_wait_block2 component not found!")
      Each Frame:
        # Scanner sync Block 2 - wait for MRI scanner trigger (key '5')
        # Only runs if taskStartSoonBlock2 has completed

        # Check if we should still be showing this
        ready_for_scanner_sync_block2 = globals().get('ready_for_scanner_sync_block2', False)
        block2_setup_complete = globals().get('block2_setup_complete', False)

        # Also check if we've already started Block 2 trials
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if any of these conditions are true
        # Skip if: block 2 setup already done (NEVER show again), OR still in Block 1, OR taskStartSoonBlock2 hasn't completed, OR already well into Block 2 trials
        # Allow during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or not ready_for_scanner_sync_block2 or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block:
            # taskStartSoonBlock2 hasn't completed yet OR block 2 setup already done OR still in Block 1 OR already in Block 2 - skip
            continueRoutine = False
        else:
            # The MRI sends '5' when it's ready
            # Only accept keys pressed AFTER this routine started (ignore carryover)
            import time
            routine_start_time = globals().get('scannerSyncBlock2_start_time', time.time())
            current_time = time.time()

            # Only process keys if at least 0.1 seconds have passed since routine started
            if current_time - routine_start_time >= 0.1:
                try:
                    keys = event.getKeys(keyList=['5', 'num_5'])
                    if keys:
                        # Reset scanner_clock IMMEDIATELY when "5" is pressed (timer starts here)
                        # This ensures Block 2 trial 1 fruit_onset reflects time since "5", not 0
                        import psychopy.core as psychopy_core
                        sc = globals().get('scanner_clock', None)
                        if sc is not None:
                            sc.reset()
                        else:
                            sc = psychopy_core.Clock()
                            globals()['scanner_clock'] = sc
                            try:
                                thisExp.scanner_clock = sc
                            except Exception:
                                pass
                        print("[Block 2] Scanner clock reset at trigger '5' (timer started)")
                        print("Scanner sync Block 2: Trigger '5' received from MRI scanner, continuing")
                        continueRoutine = False
                        event.clearEvents()
                except Exception as e:
                    print(f"WARNING scannerSyncBlock2 EachFrame: {e}")
      End Routine:
        # Block 2 scanner sync cleanup (clock already reset in EachFrame when "5" pressed)
        # Match day 1: cleanup + ensure clock exists
        scanner_block2_was_shown = globals().get('scanner_block2_was_shown', False)

        if scanner_block2_was_shown:
            if 'text_scanner_wait_block2' in locals():
                text_scanner_wait_block2.setAutoDraw(False)
                text_scanner_wait_block2.opacity = 0
            try:
                event.clearEvents()
            except:
                pass
            globals()['block2_setup_complete'] = True
            globals()['scanner_block2_was_shown'] = False
            print("Block 2 scanner sync complete")
            # Clock was reset in EachFrame when "5" was pressed; ensure it exists as backup
            if globals().get('scanner_clock', None) is None:
                import psychopy.core as psychopy_core
                sc = psychopy_core.Clock()
                globals()['scanner_clock'] = sc
                try:
                    thisExp.scanner_clock = sc
                except Exception:
                    pass
                print("[Block 2] Scanner clock created in EndRoutine (backup)")
        else:
            print("scannerSyncBlock2 end routine: routine was skipped, doing nothing")
    TextComponent text_scanner_wait_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for the scanner to start...
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    KeyboardComponent key_resp_13
      allowedKeys = '5', 'num_5', 'num5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine taskStartSoonBlock2
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    CodeComponent code_26
      Code Type = Py
      Begin Routine:
        # "Task will start soon. Press C to continue" screen - for second block
        # Only shows after first block completes (after blockTransition)
        # Component: text_task_start_soon_block2 (or similar text component)

        # Check if we should show this (only after block transition completes, and only once)
        # The blockTransition sets ready_for_block2_setup = True when user presses 2
        ready_for_block2_setup = globals().get('ready_for_block2_setup', False)
        block2_setup_complete = globals().get('block2_setup_complete', False)

        # Also check if we've already started Block 2 trials (once Block 2 has started, never show this again)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # DEBUG: Print flag states
        print(f"DEBUG taskStartSoonBlock2: ready_for_block2_setup={ready_for_block2_setup}, block2_setup_complete={block2_setup_complete}, learning_block_index={learning_block_index}, trials_per_block={trials_per_block}")

        # Skip if:
        # 1. Block transition hasn't completed yet (ready_for_block2_setup = False)
        # 2. Block 2 setup already done (block2_setup_complete = True)
        # 3. Still in Block 1 (learning_block_index < trials_per_block - 1)
        # 4. Already well into Block 2 (learning_block_index > trials_per_block)
        # Show during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if not ready_for_block2_setup or block2_setup_complete or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block:
            # Skip this routine
            if block2_setup_complete:
                print("Skipping taskStartSoonBlock2 (block 2 setup already completed)")
            elif learning_block_index < trials_per_block - 1:
                print(f"Skipping taskStartSoonBlock2 (still in Block 1, learning_block_index={learning_block_index} < trials_per_block-1={trials_per_block-1})")
            elif learning_block_index > trials_per_block:
                print(f"Skipping taskStartSoonBlock2 (already in Block 2, learning_block_index={learning_block_index} > trials_per_block={trials_per_block})")
            else:
                print(f"Skipping taskStartSoonBlock2 (block transition not completed yet, ready_for_block2_setup={ready_for_block2_setup})")
            continueRoutine = False
        else:
            # We're past the first block - show the screen
            # IMPORTANT: Hide any previous text components first to prevent overlap
            if 'text_block_transition' in locals():
                text_block_transition.setAutoDraw(False)
                text_block_transition.opacity = 0
                print("Hidden block transition text")

            # Clear any previous key presses IMMEDIATELY to prevent carryover
            try:
                event.clearEvents()
                # Also clear any keyboard component buffers
                if 'key_resp_task_start_block2' in locals() and hasattr(key_resp_task_start_block2, 'keys'):
                    key_resp_task_start_block2.keys = []
            except:
                pass

            # Set a timestamp to ignore any keys pressed before this routine started
            import time
            globals()['taskStartSoonBlock2_start_time'] = time.time()
            print(f"Task start soon Block 2: Routine started at {globals()['taskStartSoonBlock2_start_time']}, cleared key buffer")

            # Display task start message
            if 'text_task_start_soon_block2' in locals():
                text_task_start_soon_block2.text = "The task will start soon. Press C to continue"
                text_task_start_soon_block2.opacity = 1
                text_task_start_soon_block2.setAutoDraw(True)
                print("Task start soon screen displayed (for second block)")
            else:
                print("WARNING: text_task_start_soon_block2 component not found!")
      Each Frame:
        # Task start soon Block 2 - wait for key press 'C' to continue
        # Only runs if block transition has completed

        # Check if we should still be showing this
        ready_for_block2_setup = globals().get('ready_for_block2_setup', False)
        block2_setup_complete = globals().get('block2_setup_complete', False)

        # Also check if we've already started Block 2 trials
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if any of these conditions are true
        # Skip if: still in Block 1, OR block 2 setup already done, OR block transition hasn't completed, OR already in Block 2
        if not ready_for_block2_setup or block2_setup_complete or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block:
            # Block transition hasn't completed yet OR block 2 setup already done OR still in Block 1 OR already in Block 2 - skip
            continueRoutine = False
        else:
            # Check for key press 'C' to continue
            # Only accept keys pressed AFTER this routine started (ignore carryover)
            import time
            routine_start_time = globals().get('taskStartSoonBlock2_start_time', time.time())
            current_time = time.time()

            # Only process keys if at least 0.1 seconds have passed since routine started
            # This prevents using keys that were pressed before the routine started
            if current_time - routine_start_time >= 0.1:
                try:
                    keys = event.getKeys(keyList=['c', 'C'])
                    if keys:
                        # Key C pressed - continue to scanner sync
                        print("Task start soon Block 2: Key C pressed, continuing to scanner sync")
                        continueRoutine = False
                        event.clearEvents()
                        # Set flag for scanner sync
                        globals()['ready_for_scanner_sync_block2'] = True
                except:
                    pass
      End Routine:
        # Hide task start soon Block 2 text when routine ends
        if 'text_task_start_soon_block2' in locals():
            text_task_start_soon_block2.setAutoDraw(False)
            text_task_start_soon_block2.opacity = 0
            print("Task start soon Block 2 text hidden")

        # Clear any remaining key presses
        try:
            event.clearEvents()
        except:
            pass

        # IMPORTANT: Set flag to indicate taskStartSoonBlock2 completed, ready for scanner sync
        globals()['ready_for_scanner_sync_block2'] = True
        print("Task start soon Block 2 ended, ready for scanner sync (ready_for_scanner_sync_block2 = True)")
    KeyboardComponent key_resp_task_start_block2
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_task_start_soon_block2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The task will start soon.

        Press C to continue.
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  Routine practiceIntro2
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    CodeComponent code_28
      Code Type = Py
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      Begin Routine:
        # Practice introduction screen 2 (before practice decision trials)
        # Shows "We will run a short practice task now. Press 2 to continue"
        # Component: text_practice_intro (or similar text component)

        # IMPORTANT: Hide all leftover components from previous routines (especially fixation crosses)
        # Hide practice decision components
        if 'text_question1' in locals():
            text_question1.setAutoDraw(False)
            text_question1.opacity = 0
        if 'text_question_3' in locals():
            text_question_3.setAutoDraw(False)
            text_question_3.opacity = 0
        if 'text_question_4' in locals():
            text_question_4.setAutoDraw(False)
            text_question_4.opacity = 0
        if 'text_25' in locals():
            text_25.setAutoDraw(False)
            text_25.opacity = 0

        # Hide practice decision images
        if 'image_left3' in locals():
            image_left3.setAutoDraw(False)
            image_left3.opacity = 0
        if 'image_right3' in locals():
            image_right3.setAutoDraw(False)
            image_right3.opacity = 0
        if 'image_left1_3' in locals():
            image_left1_3.setAutoDraw(False)
            image_left1_3.opacity = 0
        if 'image_right2_3' in locals():
            image_right2_3.setAutoDraw(False)
            image_right2_3.opacity = 0
        if 'image_left_left1' in locals():
            image_left_left1.setAutoDraw(False)
            image_left_left1.opacity = 0
        if 'image_right_right1' in locals():
            image_right_right1.setAutoDraw(False)
            image_right_right1.opacity = 0

        # Clear any previous key presses
        try:
            event.clearEvents()
        except:
            pass

        # Check if practice_decision_block exists, if not, re-initialize it
        practice_decision_block = globals().get('practice_decision_block', [])
        if not practice_decision_block or len(practice_decision_block) == 0:
            print("WARNING: practice_decision_block is empty! Re-initializing...")
            import random
            image_dir = "images/"

            # Practice fruit values (baselines from learning practice)
            practice_fruit_values = {
                image_dir + "ten.png": 10,      # ten = 10
                image_dir + "thirty.png": 30,   # thirty = 30
                image_dir + "fifty.png": 50     # fifty = 50
            }

            # Practice decision pairs with counterbalancing (same structure as main decision trials)
            practice_decision_pairs = [
                (image_dir + "ten.png", image_dir + "thirty.png"),    # ten/thirty
                (image_dir + "thirty.png", image_dir + "fifty.png"),  # thirty/fifty
                (image_dir + "ten.png", image_dir + "fifty.png")       # ten/fifty
            ]

            practice_decision_block = []
            for fruit1, fruit2 in practice_decision_pairs:
                left_val = practice_fruit_values[fruit1]
                right_val = practice_fruit_values[fruit2]
                correct_side = "left" if left_val > right_val else "right"

                # ALWAYS left appears first, then right
                practice_decision_block.append({
                    "leftFruit": fruit1,
                    "rightFruit": fruit2,
                    "firstFruit": fruit1,     # Left fruit appears first
                    "firstSide": "left",      # ALWAYS left first
                    "secondFruit": fruit2,    # Right fruit appears second
                    "secondSide": "right",   # ALWAYS right second
                    "leftVal": left_val,
                    "rightVal": right_val,
                    "correct": correct_side
                })
                print(f"Re-initialized practice decision trial: {fruit1.split('/')[-1]} vs {fruit2.split('/')[-1]} (left={left_val}, right={right_val}, correct={correct_side}, first=left)")

            globals()['practice_decision_block'] = practice_decision_block
            print(f"Re-initialized practice_decision_block with {len(practice_decision_block)} trials")
        else:
            print(f"DEBUG practiceIntro2: practice_decision_block exists with {len(practice_decision_block)} trials")

        # Reset practice_decision_index to -1 before practice decision loop starts
        # This ensures it starts fresh at 0 for the first practice trial
        practice_decision_index = -1
        globals()['practice_decision_index'] = practice_decision_index
        print(f"DEBUG practiceIntro2: Reset practice_decision_index to -1 (will be 0 for first practice trial)")

        # Display practice introduction text
        if 'text_practice_intro' in locals():
            text_practice_intro.text = "We will run a short practice task now. Press C to continue"
            text_practice_intro.opacity = 1
            text_practice_intro.setAutoDraw(True)
            print("Practice introduction screen displayed")
        else:
            print("WARNING: text_practice_intro component not found!")
      Each Frame:
        # Practice introduction screen 2 - wait for key press '2' to continue
        # Check for key press '2' to continue to practice decision trials

        try:
            keys = event.getKeys(keyList=['2', 'num_2'])
            if keys:
                # Key 2 pressed - continue to practice decision trials
                print("Practice intro 2: Key 2 pressed, continuing to practice decision trials")
                continueRoutine = False
                event.clearEvents()
        except:
            pass
      End Routine:
        # Hide practice introduction text
        if 'text_practice_intro' in locals():
            text_practice_intro.setAutoDraw(False)
            text_practice_intro.opacity = 0
    KeyboardComponent key_resp_15
      allowedKeys = ['c', 'C']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine practiceDecisionSimulus1
    RoutineSettingsComponent practiceDecisionSimulus1
      stopVal [duration (s)] = 2
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    TextComponent text_question1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent code_29
      Code Type = Py
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      Begin Routine:
        # Practice decision - First stimulus screen - shows first dollar amount on its side for 2 seconds
        # Components: text_question1, text_dollar_left_practice, text_dollar_right_practice
        # Shows dollar amount ($5, $1, or $10) on left or right side for 2 seconds

        # Get practice_decision_index and practice_decision_block from globals
        practice_decision_index = globals().get('practice_decision_index', -1)
        practice_decision_index += 1
        globals()['practice_decision_index'] = practice_decision_index

        practice_decision_block = globals().get('practice_decision_block', [])

        # DEBUG: Print block info
        print(f"DEBUG practiceDecisionStimulus1: practice_decision_index={practice_decision_index}, block_length={len(practice_decision_block) if practice_decision_block else 0}")

        if practice_decision_block and practice_decision_index >= 0 and practice_decision_index < len(practice_decision_block):
            current = practice_decision_block[practice_decision_index]
            first_dollar = current["firstDollar"]  # Dollar amount (e.g., "$5", "$1", "$10")
            first_side = current["firstSide"]

            # Show central fixation cross
            if 'text_question1' in locals():
                text_question1.text = "+"
                try:
                    text_question1.setPos((0, 0))
                except AttributeError:
                    text_question1.pos = (0, 0)
                text_question1.opacity = 1
                text_question1.setAutoDraw(True)

            # Show first dollar amount on its designated side
            # Hide both text components first, then show the correct one
            if 'text_dollar_left_practice' in locals():
                text_dollar_left_practice.opacity = 0
                text_dollar_left_practice.setAutoDraw(False)
            if 'text_dollar_right_practice' in locals():
                text_dollar_right_practice.opacity = 0
                text_dollar_right_practice.setAutoDraw(False)

            if first_side == "left":
                if 'text_dollar_left_practice' in locals():
                    text_dollar_left_practice.text = first_dollar
                    text_dollar_left_practice.opacity = 1
                    # Set larger font size for currency numbers
                    try:
                        text_dollar_left_practice.height = 0.1  # Larger font size (default is typically 0.05)
                    except AttributeError:
                        pass  # If height can't be set, continue anyway
                    text_dollar_left_practice.setAutoDraw(True)
            else:  # right
                if 'text_dollar_right_practice' in locals():
                    text_dollar_right_practice.text = first_dollar
                    text_dollar_right_practice.opacity = 1
                    # Set larger font size for currency numbers
                    try:
                        text_dollar_right_practice.height = 0.1  # Larger font size (default is typically 0.05)
                    except AttributeError:
                        pass  # If height can't be set, continue anyway
                    text_dollar_right_practice.setAutoDraw(True)

            print(f"Practice decision {practice_decision_index+1}/3: Showing {first_dollar} on {first_side} (2 seconds)")
        else:
            print(f"WARNING: Practice decision trial {practice_decision_index} out of range")
      End Routine:
        # Hide dollar amount text components when practiceDecisionStimulus1 ends
        # This ensures clean transition to crosshair ITI
        if 'text_dollar_left_practice' in locals():
            text_dollar_left_practice.setAutoDraw(False)
            text_dollar_left_practice.opacity = 0
        if 'text_dollar_right_practice' in locals():
            text_dollar_right_practice.setAutoDraw(False)
            text_dollar_right_practice.opacity = 0
        if 'text_question1' in locals():
            text_question1.setAutoDraw(False)
            text_question1.opacity = 0

        # Clear any key presses
        try:
            event.clearEvents()
        except:
            pass
    TextComponent text_dollar_left_practice
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
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    TextComponent text_dollar_right_practice
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
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  Routine practiceDecisionSimulus2
    RoutineSettingsComponent practiceDecisionSimulus2
      stopVal [duration (s)] = 2
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    TextComponent text_question_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    CodeComponent code_30
      Code Type = Py
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      Begin Routine:
        # Practice decision - Second stimulus screen - shows second dollar amount on its side for 2 seconds
        # Components: text_question_3, text_dollar_left_practice, text_dollar_right_practice
        # Shows second dollar amount on left or right side for 2 seconds

        # Get practice_decision_index and practice_decision_block from globals
        practice_decision_index = globals().get('practice_decision_index', 0)
        practice_decision_block = globals().get('practice_decision_block', [])

        # DEBUG: Print block info
        print(f"DEBUG practiceDecisionStimulus2: practice_decision_index={practice_decision_index}, block_length={len(practice_decision_block) if practice_decision_block else 0}")

        if practice_decision_block and practice_decision_index >= 0 and practice_decision_index < len(practice_decision_block):
            current = practice_decision_block[practice_decision_index]
            second_dollar = current["secondDollar"]  # Dollar amount (e.g., "$5", "$1", "$10")
            second_side = current["secondSide"]

            # Show central fixation cross
            if 'text_question_3' in locals():
                text_question_3.text = "+"
                try:
                    text_question_3.setPos((0, 0))
                except AttributeError:
                    text_question_3.pos = (0, 0)
                text_question_3.opacity = 1
                text_question_3.setAutoDraw(True)

            # Hide previous crosshair
            if 'text_crosshair_practice_decision1' in locals():
                text_crosshair_practice_decision1.opacity = 0
                text_crosshair_practice_decision1.setAutoDraw(False)
            elif 'text_25' in locals():
                text_25.opacity = 0
                text_25.setAutoDraw(False)

            # Hide first dollar amount (from practiceDecisionStimulus1)
            if 'text_dollar_left_practice' in locals():
                text_dollar_left_practice.opacity = 0
                text_dollar_left_practice.setAutoDraw(False)
            if 'text_dollar_right_practice' in locals():
                text_dollar_right_practice.opacity = 0
                text_dollar_right_practice.setAutoDraw(False)

            # Show second dollar amount on its designated side (using _2 components)
            if second_side == "left":
                if 'text_dollar_left_practice_2' in locals():
                    text_dollar_left_practice_2.text = second_dollar
                    text_dollar_left_practice_2.opacity = 1
                    # Set larger font size for currency numbers
                    try:
                        text_dollar_left_practice_2.height = 0.1  # Larger font size (default is typically 0.05)
                    except AttributeError:
                        pass  # If height can't be set, continue anyway
                    text_dollar_left_practice_2.setAutoDraw(True)
            else:  # right
                if 'text_dollar_right_practice_2' in locals():
                    text_dollar_right_practice_2.text = second_dollar
                    text_dollar_right_practice_2.opacity = 1
                    # Set larger font size for currency numbers
                    try:
                        text_dollar_right_practice_2.height = 0.1  # Larger font size (default is typically 0.05)
                    except AttributeError:
                        pass  # If height can't be set, continue anyway
                    text_dollar_right_practice_2.setAutoDraw(True)

            print(f"Practice decision {practice_decision_index+1}/3: Showing {second_dollar} on {second_side} (2 seconds)")
        else:
            print(f"WARNING: Practice decision trial {practice_decision_index} out of range")
      End Routine:
        # Hide dollar amount text components when practiceDecisionStimulus2 ends
        # This ensures clean transition to crosshair ITI
        if 'text_dollar_left_practice_2' in locals():
            text_dollar_left_practice_2.setAutoDraw(False)
            text_dollar_left_practice_2.opacity = 0
            text_dollar_left_practice_2.text = ""  # Clear text
        if 'text_dollar_right_practice_2' in locals():
            text_dollar_right_practice_2.setAutoDraw(False)
            text_dollar_right_practice_2.opacity = 0
            text_dollar_right_practice_2.text = ""  # Clear text
        if 'text_question_3' in locals():
            text_question_3.setAutoDraw(False)
            text_question_3.opacity = 0

        # Clear any key presses
        try:
            event.clearEvents()
        except:
            pass
    TextComponent text_dollar_left_practice_2
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
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    TextComponent text_dollar_right_practice_2
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
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  Routine practiceDecisionMaking
    RoutineSettingsComponent practiceDecisionMaking
      stopVal [duration (s)] = 4
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    TextComponent text_question_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = +
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    CodeComponent code_31
      Code Type = Py
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      Begin Routine:
        # Practice decision phase - both dollar amounts shown simultaneously (2 seconds fixed)
        # Components: text_question_4, text_dollar_left_practice, text_dollar_right_practice, mouse_2
        # Shows both dollar amounts together for decision
        import time

        # Get practice_decision_index and practice_decision_block from globals
        practice_decision_index = globals().get('practice_decision_index', 0)
        practice_decision_block = globals().get('practice_decision_block', [])

        if practice_decision_block and practice_decision_index >= 0 and practice_decision_index < len(practice_decision_block):
            current = practice_decision_block[practice_decision_index]
            leftDollar  = current["leftDollar"]   # Dollar amount for left (e.g., "$5")
            rightDollar = current["rightDollar"]  # Dollar amount for right (e.g., "$1")
            correct     = current["correct"]

            # Show central fixation cross
            if 'text_question_4' in locals():
                text_question_4.text = "+"
                try:
                    text_question_4.setPos((0, 0))
                except AttributeError:
                    text_question_4.pos = (0, 0)
                text_question_4.opacity = 1
                text_question_4.setAutoDraw(True)

            # Hide previous crosshair
            if 'text_crosshair_practice_decision2' in locals():
                text_crosshair_practice_decision2.opacity = 0
                text_crosshair_practice_decision2.setAutoDraw(False)

            # Hide dollar amounts from previous routines
            if 'text_dollar_left_practice' in locals():
                text_dollar_left_practice.opacity = 0
                text_dollar_left_practice.setAutoDraw(False)
            if 'text_dollar_right_practice' in locals():
                text_dollar_right_practice.opacity = 0
                text_dollar_right_practice.setAutoDraw(False)
            if 'text_dollar_left_practice_2' in locals():
                text_dollar_left_practice_2.opacity = 0
                text_dollar_left_practice_2.setAutoDraw(False)
            if 'text_dollar_right_practice_2' in locals():
                text_dollar_right_practice_2.opacity = 0
                text_dollar_right_practice_2.setAutoDraw(False)

            # Show both dollar amounts simultaneously (using _3 components)
            if 'text_dollar_left_practice_3' in locals():
                text_dollar_left_practice_3.text = leftDollar
                text_dollar_left_practice_3.opacity = 1
                # Set larger font size for currency numbers
                try:
                    text_dollar_left_practice_3.height = 0.1  # Larger font size (default is typically 0.05)
                except AttributeError:
                    pass  # If height can't be set, continue anyway
                text_dollar_left_practice_3.setAutoDraw(True)
            if 'text_dollar_right_practice_3' in locals():
                text_dollar_right_practice_3.text = rightDollar
                text_dollar_right_practice_3.opacity = 1
                # Set larger font size for currency numbers
                try:
                    text_dollar_right_practice_3.height = 0.1  # Larger font size (default is typically 0.05)
                except AttributeError:
                    pass  # If height can't be set, continue anyway
                text_dollar_right_practice_3.setAutoDraw(True)

            # Reset choice and start timer (for practice, allow responses during 2 second display)
            choice = ""
            decision_start_time = time.time()
            decision_timed_out = False

            # Store in globals for use in EachFrame
            globals()['choice'] = choice
            globals()['decision_start_time'] = decision_start_time
            globals()['decision_timed_out'] = False

            # Clear any key presses from previous routines ONCE at the start
            try:
                event.clearEvents()
                print(f"Cleared key buffer at practice decision start")
            except:
                pass

            # Set a small ignore window to prevent immediate key registration (0.1 seconds)
            ignore_keys_until = decision_start_time + 0.1
            globals()['ignore_keys_until'] = ignore_keys_until

            if 'mouse_2' in locals():
                mouse_2.clickReset()
            print(f"Practice decision {practice_decision_index+1}/3: {leftDollar} vs {rightDollar}, correct={correct} (2 seconds fixed)")
        else:
            # No more practice decision trials
            leftDollar = ""
            rightDollar = ""
            choice = ""
            print("No more practice decision trials available")
      Each Frame:
        # Practice decision phase - check for response (2 seconds fixed duration)
        # Using keys 1/3: 1 = left image, 3 = right image
        import time

        # Get practice_decision_index from globals (needed for logging)
        practice_decision_index = globals().get('practice_decision_index', -1)

        # Get decision_start_time and ignore_keys_until from globals (set in BeginRoutine)
        decision_start_time = globals().get('decision_start_time', time.time())
        ignore_keys_until = globals().get('ignore_keys_until', decision_start_time + 0.1)

        # Initialize decision_timed_out if not already set
        decision_timed_out = globals().get('decision_timed_out', False)

        # Check for timeout (2 seconds max for practice)
        try:
            elapsed_time = time.time() - decision_start_time

            if elapsed_time >= 2.0:
                # Timeout - no response (routine will end at 2 seconds fixed duration)
                if not globals().get('choice', ""):
                    choice = ""
                    decision_rt = 2.0
                    decision_timed_out = True
                    # Store in globals for EndRoutine
                    globals()['decision_timed_out'] = True
                    globals()['decision_rt'] = 2.0
                    print(f"Practice decision {practice_decision_index+1}/3: No response within 2.0 seconds")
                continueRoutine = False
        except:
            decision_timed_out = False

        # Only check for keys if we're past the ignore window AND not timed out
        if not decision_timed_out:
            current_time = time.time()
            if current_time >= ignore_keys_until:
                # Check for keyboard input (keys 1 or 3)
                try:
                    keys = event.getKeys(keyList=['1', '3', 'num_1', 'num_3'])
                    for key in keys:
                        # Normalize key names (handle both '1' and 'num_1' formats)
                        if key == 'num_1' or key == '1':
                            # Key 1: Choose left image
                            choice = "left"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            # Store in globals
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            print(f"Practice decision {practice_decision_index+1}/3: Chose left (key 1, RT={decision_rt:.2f}s)")
                            continueRoutine = False
                            # Clear events after processing
                            try:
                                event.clearEvents()
                            except:
                                pass
                            break
                        elif key == 'num_3' or key == '3':
                            # Key 3: Choose right image
                            choice = "right"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            # Store in globals
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            print(f"Practice decision {practice_decision_index+1}/3: Chose right (key 3, RT={decision_rt:.2f}s)")
                            continueRoutine = False
                            # Clear events after processing
                            try:
                                event.clearEvents()
                            except:
                                pass
                            break
                except (NameError, AttributeError):
                    # Fallback: Check for mouse click (using mouse_2 and correct image components)
                    if 'mouse_2' in locals() and 'image_left_left1' in locals() and 'image_right_right1' in locals():
                        if mouse_2.isPressedIn(image_left_left1):
                            choice = "left"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            print(f"Practice decision {practice_decision_index+1}/3: Chose left (mouse, RT={decision_rt:.2f}s)")
                            continueRoutine = False
                        elif mouse_2.isPressedIn(image_right_right1):
                            choice = "right"
                            decision_rt = time.time() - decision_start_time
                            decision_timed_out = False
                            globals()['choice'] = choice
                            globals()['decision_rt'] = decision_rt
                            globals()['decision_timed_out'] = False
                            print(f"Practice decision {practice_decision_index+1}/3: Chose right (mouse, RT={decision_rt:.2f}s)")
                            continueRoutine = False
      End Routine:
        # Get practice_decision_index and practice_decision_block from globals
        practice_decision_index = globals().get('practice_decision_index', -1)
        practice_decision_block = globals().get('practice_decision_block', [])

        # Get choice, decision_rt, and decision_timed_out from globals (set in EachFrame)
        choice = globals().get('choice', "")
        decision_rt = globals().get('decision_rt', 4.0)
        decision_timed_out = globals().get('decision_timed_out', False)

        # Get leftDollar and rightDollar from current trial
        if practice_decision_block and practice_decision_index >= 0 and practice_decision_index < len(practice_decision_block):
            current = practice_decision_block[practice_decision_index]
            leftDollar = current.get("leftDollar", "")
            rightDollar = current.get("rightDollar", "")
            correct = current.get("correct", "")
        else:
            leftDollar = ""
            rightDollar = ""
            correct = ""

        # Determine correctness
        was_correct = (choice == correct) if choice else False

        # Convert reaction time to milliseconds
        decision_rt_value = decision_rt if decision_rt is not None else 4.0
        decision_rt_ms = int(decision_rt_value * 1000)

        # Calculate timeout duration for timeout screen (1.5 seconds if timed out, 0 otherwise)
        decision_timeout_duration = 1.5 if decision_timed_out else 0.0
        globals()['decision_timeout_duration'] = decision_timeout_duration

        # Log the practice decision data (for debugging/monitoring, not saved to CSV)
        print(f"Practice decision {practice_decision_index+1}/3: {choice} (correct: {correct}, accurate: {was_correct}, RT: {decision_rt_value:.2f}s, timed_out: {decision_timed_out})")
        print(f"Practice decision EndRoutine: RT={decision_rt_value:.3f}s={decision_rt_ms}ms, responded_in_time={not decision_timed_out}, timed_out={decision_timed_out}")

        # Hide dollar amount text components (from practiceDecisionMaking - _3 components)
        if 'text_dollar_left_practice_3' in locals():
            text_dollar_left_practice_3.setAutoDraw(False)
            text_dollar_left_practice_3.opacity = 0
        if 'text_dollar_right_practice_3' in locals():
            text_dollar_right_practice_3.setAutoDraw(False)
            text_dollar_right_practice_3.opacity = 0
        if 'text_question_4' in locals():
            text_question_4.setAutoDraw(False)
            text_question_4.opacity = 0

        # Practice decision trials don't increment the regular decision_index
        # They're separate and just for practice
    TextComponent text_dollar_right_practice_3
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
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    TextComponent text_dollar_left_practice_3
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
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  Routine taskStartSoonBlock3
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    CodeComponent code_32
      Code Type = Py
      Begin Routine:
        # "Task will start soon. Press 2 to continue" screen - for third block (decision phase)
        # Shows after practice decision trials complete
        # Component: text_task_start_soon_block3 (or similar text component)

        # Clear any previous key presses IMMEDIATELY to prevent carryover
        try:
            event.clearEvents()
        except:
            pass

        # Set a timestamp to ignore any keys pressed before this routine started
        import time
        globals()['taskStartSoonBlock3_start_time'] = time.time()

        # Display task start message
        if 'text_task_start_soon_block3' in locals():
            text_task_start_soon_block3.text = "The task will start soon. Press C to continue"
            text_task_start_soon_block3.opacity = 1
            text_task_start_soon_block3.setAutoDraw(True)
            print("Task start soon screen displayed (for Block 3 - decision phase)")
        else:
            print("WARNING: text_task_start_soon_block3 component not found!")
      Each Frame:
        # Task start soon Block 3 - wait for key press '2' to continue
        # Check for key press '2' to continue to scanner sync
        import time

        # Only accept keys pressed AFTER this routine started (ignore carryover)
        routine_start_time = globals().get('taskStartSoonBlock3_start_time', time.time())
        current_time = time.time()

        # Only process keys if at least 0.1 seconds have passed since routine started
        if current_time - routine_start_time >= 0.1:
            try:
                keys = event.getKeys(keyList=['c', 'C'])
                if keys:
                    # Key 2 pressed - continue to scanner sync
                    print("Task start soon Block 3: Key C pressed, continuing to scanner sync")
                    continueRoutine = False
                    event.clearEvents()
            except:
                pass
    TextComponent text_task_start_soon_block3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = The task will start soon. Press C to continue.
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  Routine scannerSyncBlock3
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    CodeComponent code_33
      Code Type = Py
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      Begin Routine:
        # MRI Scanner sync Block 3 - wait for scanner trigger (key '5')
        # Shows after taskStartSoonBlock3 completes
        # Component: text_scanner_wait_block3 (or similar text component)

        # Clear any previous key presses IMMEDIATELY to prevent carryover
        try:
            event.clearEvents()
        except:
            pass

        # Set a timestamp to ignore any keys pressed before this routine started
        import time
        globals()['scannerSyncBlock3_start_time'] = time.time()

        # Display waiting message
        if 'text_scanner_wait_block3' in locals():
            text_scanner_wait_block3.text = "Waiting for the scanner to start..."
            text_scanner_wait_block3.opacity = 1
            text_scanner_wait_block3.setAutoDraw(True)
            print("Scanner sync Block 3: Waiting for trigger '5' from MRI scanner")
        else:
            print("WARNING: text_scanner_wait_block3 component not found!")
      Each Frame:
        # Scanner sync Block 3 - wait for MRI scanner trigger (key '5')
        # The MRI sends '5' when it's ready
        # Only accept keys pressed AFTER this routine started (ignore carryover)
        import time

        routine_start_time = globals().get('scannerSyncBlock3_start_time', time.time())
        current_time = time.time()

        # Only process keys if at least 0.1 seconds have passed since routine started
        if current_time - routine_start_time >= 0.1:
            try:
                keys = event.getKeys(keyList=['5', 'num_5'])
                if keys:
                    # Scanner trigger received - continue to next screen
                    print("Scanner sync Block 3: Trigger '5' received from MRI scanner, continuing")
                    continueRoutine = False
                    event.clearEvents()
            except:
                pass
      End Routine:
        # Create/reset scanner_clock when Block 3 scanner sync completes (user pressed 5)
        # Store in both thisExp and globals for reliable persistence across trials
        try:
            import psychopy.core as psychopy_core
            clock = globals().get('scanner_clock') or getattr(thisExp, 'scanner_clock', None)
            if clock is None:
                clock = psychopy_core.Clock()
            clock.reset()
            globals()['scanner_clock'] = clock
            thisExp.scanner_clock = clock
            print("[Block 3] Scanner clock created/reset for decision phase")
        except Exception as e:
            print(f"WARNING: Could not create scanner_clock: {e}")
    TextComponent text_scanner_wait_block3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Waiting for the scanner to start...
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  Routine crosshair3Block3
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    CodeComponent code_34
      Code Type = Py
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      Begin Routine:
        # Crosshair 3 Block 3 - 2 second fixation cross before Block 3 (decision phase)
        # Component: text_crosshair3_block3 (or similar text component)

        # Show fixation cross
        if 'text_crosshair3_block3' in locals():
            text_crosshair3_block3.text = "+"
            try:
                text_crosshair3_block3.setPos((0, 0))
            except AttributeError:
                text_crosshair3_block3.pos = (0, 0)
            text_crosshair3_block3.opacity = 1
            text_crosshair3_block3.setAutoDraw(True)
            print("Crosshair 3 Block 3: Showing fixation cross (2 seconds)")
        else:
            print("WARNING: text_crosshair3_block3 component not found!")
      End Routine:
        # Hide crosshair
        if 'text_crosshair3_block3' in locals():
            text_crosshair3_block3.setAutoDraw(False)
            text_crosshair3_block3.opacity = 0
    TextComponent text_crosshair3_block3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine scannerWaitBlock3
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    CodeComponent code_35
      Code Type = Py
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      Begin Routine:
        # Scanner wait Block 3 - shows wait image for 2 seconds before Block 3 (decision phase)
        # Component: image_scanner_wait_block3 (or similar image component)

        # Show wait image
        if 'image_scanner_wait_block3' in locals():
            image_scanner_wait_block3.opacity = 1
            image_scanner_wait_block3.setAutoDraw(True)
            print("Scanner wait Block 3: Showing wait image (2 seconds)")
        else:
            print("WARNING: image_scanner_wait_block3 component not found!")
      End Routine:
        # Hide wait image
        if 'image_scanner_wait_block3' in locals():
            image_scanner_wait_block3.setAutoDraw(False)
            image_scanner_wait_block3.opacity = 0
    ImageComponent image_scanner_wait_block3
      image = images/randomImage.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine startTaskBlock3
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    CodeComponent code_36
      Code Type = Py
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      Begin Routine:
        # Start task Block 3 - 1 second before Block 3 (decision phase) begins
        # Component: text_start_task_block3 (or similar text component, optional)

        # This is just a brief pause before Block 3 decision trials start
        # You can add text here if needed, or leave it empty
        print("Start task Block 3: Brief pause before decision trials (1 second)")
    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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  Routine crosshairBlock2
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    TextComponent text_crosshair_block2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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    CodeComponent code_37
      Code Type = Py
      Begin Routine:
        # Crosshair Block 2 - 2 second fixation cross before Block 2 begins
        # Component: text_crosshair_block2 (or similar text component)

        # Check if Block 2 has already started - if so, skip this routine
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if:
        # 1. Block 2 setup is complete (block2_setup_complete = True) - NEVER show again once setup is complete
        # 2. Still in Block 1 (learning_block_index < trials_per_block - 1)
        # 3. Already well into Block 2 trials (learning_block_index > trials_per_block) - once Block 2 trials start, never show again
        # Show during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block:
            print(f"Skipping crosshairBlock2 (learning_block_index={learning_block_index}, trials_per_block={trials_per_block}, block2_setup_complete={block2_setup_complete})")
            continueRoutine = False
        else:
            # Show fixation cross
            if 'text_crosshair_block2' in locals():
                text_crosshair_block2.text = "+"
                try:
                    text_crosshair_block2.setPos((0, 0))
                except AttributeError:
                    text_crosshair_block2.pos = (0, 0)
                text_crosshair_block2.opacity = 1
                text_crosshair_block2.setAutoDraw(True)
                print("Crosshair Block 2: Showing fixation cross (2 seconds)")
            else:
                print("WARNING: text_crosshair_block2 component not found!")
      Each Frame:
        # Crosshair Block 2 - just displays fixation cross, no interaction needed
        # Check if Block 2 has already started - if so, skip this routine
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if Block 2 setup is complete OR Block 2 has already started (well into Block 2)
        # Allow during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or learning_block_index > trials_per_block:
            continueRoutine = False
      End Routine:
        # Hide crosshair when routine ends
        if 'text_crosshair_block2' in locals():
            text_crosshair_block2.setAutoDraw(False)
            text_crosshair_block2.opacity = 0
  Routine scannerWaitBlock2
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    ImageComponent image_scanner_wait_block2
      image = images/randomImage.jpg
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent code_38
      Code Type = Py
      Begin Routine:
        # Scanner wait Block 2 - 2 second display of unrelated image before Block 2 begins
        # Component: image_scanner_wait_block2 (or similar image component)

        # Check if Block 2 has already started - if so, skip this routine
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if:
        # 1. Block 2 setup is complete (block2_setup_complete = True) - NEVER show again once setup is complete
        # 2. Still in Block 1 (learning_block_index < trials_per_block - 1)
        # 3. Already well into Block 2 trials (learning_block_index > trials_per_block) - once Block 2 trials start, never show again
        # Show during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block:
            print(f"Skipping scannerWaitBlock2 (learning_block_index={learning_block_index}, trials_per_block={trials_per_block}, block2_setup_complete={block2_setup_complete})")
            continueRoutine = False
        else:
            # Show unrelated image (2 seconds)
            if 'image_scanner_wait_block2' in locals():
                # Set image to some unrelated image (e.g., "images/unrelated.png" or similar)
                # You may need to adjust the image path based on your setup
                image_scanner_wait_block2.opacity = 1
                image_scanner_wait_block2.setAutoDraw(True)
                print("Scanner wait Block 2: Showing unrelated image (2 seconds)")
            else:
                print("WARNING: image_scanner_wait_block2 component not found!")
      Each Frame:
        # Scanner wait Block 2 - just displays unrelated image, no interaction needed
        # Check if Block 2 has already started - if so, skip this routine
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if Block 2 setup is complete OR Block 2 has already started (well into Block 2)
        # Allow during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or learning_block_index > trials_per_block:
            continueRoutine = False
      End Routine:
        # Hide scanner wait image when routine ends
        if 'image_scanner_wait_block2' in locals():
            image_scanner_wait_block2.setAutoDraw(False)
            image_scanner_wait_block2.opacity = 0
        # Do NOT set block2_setup_complete here - wait until after final crosshair (crosshair2Block2)
  Routine crosshair2Block2
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    TextComponent text_crosshair2_block2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = +
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    CodeComponent code_39
      Code Type = Py
      Begin Routine:
        # Crosshair2 Block 2 - 10 second fixation cross before Block 2 begins (final crosshair)
        # Component: text_crosshair2_block2 (or similar text component)

        # Check if Block 2 has already started - if so, skip this routine
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if:
        # 1. Block 2 setup is complete (block2_setup_complete = True) - NEVER show again once setup is complete
        # 2. Still in Block 1 (learning_block_index < trials_per_block - 1)
        # 3. Already well into Block 2 trials (learning_block_index > trials_per_block) - once Block 2 trials start, never show again
        # Show during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or learning_block_index < trials_per_block - 1 or learning_block_index > trials_per_block:
            print(f"Skipping crosshair2Block2 (learning_block_index={learning_block_index}, trials_per_block={trials_per_block}, block2_setup_complete={block2_setup_complete})")
            continueRoutine = False
        else:
            # Show fixation cross
            if 'text_crosshair2_block2' in locals():
                text_crosshair2_block2.text = "+"
                try:
                    text_crosshair2_block2.setPos((0, 0))
                except AttributeError:
                    text_crosshair2_block2.pos = (0, 0)
                text_crosshair2_block2.opacity = 1
                text_crosshair2_block2.setAutoDraw(True)
                print("Crosshair2 Block 2: Showing fixation cross (10 seconds)")
                # Set flag to indicate this routine actually ran
                globals()['crosshair2Block2_actually_ran'] = True
            else:
                print("WARNING: text_crosshair2_block2 component not found!")
      Each Frame:
        # Crosshair2 Block 2 - just displays fixation cross, no interaction needed
        # Check if Block 2 has already started - if so, skip this routine
        block2_setup_complete = globals().get('block2_setup_complete', False)
        learning_block_index = globals().get('learning_block_index', -1)
        total_expected = globals().get('total_trials', 120)
        trials_per_block = total_expected // 2

        # Skip if Block 2 setup is complete OR Block 2 has already started (well into Block 2)
        # Allow during transition: learning_block_index >= trials_per_block - 1 AND learning_block_index <= trials_per_block
        if block2_setup_complete or learning_block_index > trials_per_block:
            continueRoutine = False
      End Routine:
        # IMPORTANT: Only set block2_setup_complete if this routine actually ran (wasn't skipped)
        # Check if the routine was actually shown by checking the flag set in BeginRoutine
        routine_actually_ran = globals().get('crosshair2Block2_actually_ran', False)

        if 'text_crosshair2_block2' in locals():
            # Hide crosshair2 Block 2 text when routine ends
            text_crosshair2_block2.setAutoDraw(False)
            text_crosshair2_block2.opacity = 0
            print("Crosshair2 Block 2 text hidden")

        # Clear any remaining key presses
        try:
            event.clearEvents()
        except:
            pass

        # IMPORTANT: ONLY mark block 2 setup as complete if this routine actually ran
        # This prevents the flag from being set when the routine is skipped
        # Sequence: scannerSyncBlock2 → crosshairBlock2 → scannerWaitBlock2 → crosshair2Block2 (this routine)
        if routine_actually_ran:
            globals()['ready_for_block2_setup'] = False
            globals()['ready_for_scanner_sync_block2'] = False
            globals()['block2_setup_complete'] = True
            print("Block 2 setup complete - all scanner sync routines finished (scannerSyncBlock2 → crosshairBlock2 → scannerWaitBlock2 → crosshair2Block2), ready for Block 2 trials")
        else:
            print("DEBUG: crosshair2Block2EndRoutine called but routine was skipped - NOT setting block2_setup_complete")
  Routine crosshair5
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    CodeComponent code_40
      Code Type = Py
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      Begin Experiment:
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine crosshairPracticeDecision1
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    CodeComponent code_41
      Code Type = Py
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      Begin Routine:
        # Crosshair ITI 1 for practice decision trials - 1 second fixed duration
        # Shows crosshair between practiceDecisionStimulus1 and practiceDecisionStimulus2
        # Component: text_crosshair_practice_decision1 (or similar crosshair component)

        # IMPORTANT: Hide ALL previous dollar amount text components from practiceDecisionStimulus1
        # Force hide to ensure clean transition
        if 'text_dollar_left_practice' in locals():
            text_dollar_left_practice.setAutoDraw(False)
            text_dollar_left_practice.opacity = 0
            text_dollar_left_practice.text = ""  # Clear text
        if 'text_dollar_right_practice' in locals():
            text_dollar_right_practice.setAutoDraw(False)
            text_dollar_right_practice.opacity = 0
            text_dollar_right_practice.text = ""  # Clear text
        if 'text_question1' in locals():
            text_question1.setAutoDraw(False)
            text_question1.opacity = 0

        # Show crosshair - make sure it's visible
        if 'text_crosshair_practice_decision1' in locals():
            text_crosshair_practice_decision1.text = "+"
            try:
                text_crosshair_practice_decision1.setPos((0, 0))
            except AttributeError:
                text_crosshair_practice_decision1.pos = (0, 0)
            text_crosshair_practice_decision1.opacity = 1
            text_crosshair_practice_decision1.setAutoDraw(True)
            print("Showing crosshair ITI 1 for practice decision (1 second)")
        elif 'text_25' in locals():
            # Fallback component name
            text_25.text = "+"
            try:
                text_25.setPos((0, 0))
            except AttributeError:
                text_25.pos = (0, 0)
            text_25.opacity = 1
            text_25.setAutoDraw(True)
            print("Showing crosshair ITI 1 for practice decision (using text_25, 1 second)")
        else:
            print("WARNING: text_crosshair_practice_decision1 or text_25 component not found!")
            print("  Make sure crosshairPracticeDecision1 routine has a text component named 'text_crosshair_practice_decision1'")

        # Duration is fixed at 1 second for practice trials
        # IMPORTANT: In PsychoPy Builder, set the routine duration to 1.0 seconds
        # The routine should have a duration of 1.0 seconds (not infinite or 0)
        globals()['crosshair_practice_decision1_duration'] = 1.0
        print(f"Crosshair ITI 1 duration: 1.0 seconds (fixed for practice)")
        print(f"  NOTE: Make sure crosshairPracticeDecision1 routine duration is set to 1.0 seconds in Builder")
      End Routine:
        # Hide crosshair when routine ends
        if 'text_crosshair_practice_decision1' in locals():
            text_crosshair_practice_decision1.setAutoDraw(False)
            text_crosshair_practice_decision1.opacity = 0
        elif 'text_25' in locals():
            text_25.setAutoDraw(False)
            text_25.opacity = 0

        # Clear any key presses
        try:
            event.clearEvents()
        except:
            pass
    TextComponent text_crosshair_practice_decision1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine crosshairPracticeDecision2
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    CodeComponent code_42
      Code Type = Py
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      Begin Routine:
        # Crosshair ITI 2 for practice decision trials - 1 second fixed duration
        # Shows crosshair between practiceDecisionStimulus2 and practiceDecisionMaking
        # Component: text_crosshair_practice_decision2 (or similar crosshair component)

        # IMPORTANT: Hide ALL previous dollar amount text components from practiceDecisionStimulus2
        # Force hide to ensure clean transition
        if 'text_dollar_left_practice_2' in locals():
            text_dollar_left_practice_2.setAutoDraw(False)
            text_dollar_left_practice_2.opacity = 0
            text_dollar_left_practice_2.text = ""  # Clear text
        if 'text_dollar_right_practice_2' in locals():
            text_dollar_right_practice_2.setAutoDraw(False)
            text_dollar_right_practice_2.opacity = 0
            text_dollar_right_practice_2.text = ""  # Clear text
        if 'text_question_3' in locals():
            text_question_3.setAutoDraw(False)
            text_question_3.opacity = 0
        if 'text_crosshair_practice_decision1' in locals():
            text_crosshair_practice_decision1.setAutoDraw(False)
            text_crosshair_practice_decision1.opacity = 0

        # Show crosshair - make sure it's visible
        if 'text_crosshair_practice_decision2' in locals():
            text_crosshair_practice_decision2.text = "+"
            try:
                text_crosshair_practice_decision2.setPos((0, 0))
            except AttributeError:
                text_crosshair_practice_decision2.pos = (0, 0)
            text_crosshair_practice_decision2.opacity = 1
            text_crosshair_practice_decision2.setAutoDraw(True)
            print("Showing crosshair ITI 2 for practice decision (1 second)")
        else:
            print("WARNING: text_crosshair_practice_decision2 component not found!")
            print("  Make sure crosshairPracticeDecision2 routine has a text component named 'text_crosshair_practice_decision2'")

        # Duration is fixed at 1 second for practice trials
        # IMPORTANT: In PsychoPy Builder, set the routine duration to 1.0 seconds
        # The routine should have a duration of 1.0 seconds (not infinite or 0)
        globals()['crosshair_practice_decision2_duration'] = 1.0
        print(f"Crosshair ITI 2 duration: 1.0 seconds (fixed for practice)")
        print(f"  NOTE: Make sure crosshairPracticeDecision2 routine duration is set to 1.0 seconds in Builder")
      End Routine:
        # Hide crosshair when routine ends
        if 'text_crosshair_practice_decision2' in locals():
            text_crosshair_practice_decision2.setAutoDraw(False)
            text_crosshair_practice_decision2.opacity = 0

        # Clear any key presses
        try:
            event.clearEvents()
        except:
            pass
    TextComponent text_crosshair_practice_decision2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine crosshairPracticeDecision3
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    CodeComponent code_43
      Code Type = Py
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      Begin Routine:
        # Crosshair ITI 3 for practice decision trials - 2 seconds fixed duration
        # Shows crosshair after practiceDecisionMaking (before next trial or end)
        # Component: text_crosshair_practice_decision3 (or similar crosshair component)

        # IMPORTANT: Hide ALL previous dollar amount text components from practiceDecisionMaking
        # Force hide to ensure clean transition
        if 'text_dollar_left_practice_3' in locals():
            text_dollar_left_practice_3.setAutoDraw(False)
            text_dollar_left_practice_3.opacity = 0
            text_dollar_left_practice_3.text = ""  # Clear text
        if 'text_dollar_right_practice_3' in locals():
            text_dollar_right_practice_3.setAutoDraw(False)
            text_dollar_right_practice_3.opacity = 0
            text_dollar_right_practice_3.text = ""  # Clear text
        if 'text_question_4' in locals():
            text_question_4.setAutoDraw(False)
            text_question_4.opacity = 0
        if 'text_crosshair_practice_decision2' in locals():
            text_crosshair_practice_decision2.setAutoDraw(False)
            text_crosshair_practice_decision2.opacity = 0

        # Show crosshair - make sure it's visible
        if 'text_crosshair_practice_decision3' in locals():
            text_crosshair_practice_decision3.text = "+"
            try:
                text_crosshair_practice_decision3.setPos((0, 0))
            except AttributeError:
                text_crosshair_practice_decision3.pos = (0, 0)
            text_crosshair_practice_decision3.opacity = 1
            text_crosshair_practice_decision3.setAutoDraw(True)
            print("Showing crosshair ITI 3 for practice decision (2 seconds)")
        else:
            print("WARNING: text_crosshair_practice_decision3 component not found!")
            print("  Make sure crosshairPracticeDecision3 routine has a text component named 'text_crosshair_practice_decision3'")

        # Duration is fixed at 2 seconds for practice trials (ITI between trials)
        # IMPORTANT: In PsychoPy Builder, set the routine duration to 2.0 seconds
        # The routine should have a duration of 2.0 seconds (not infinite or 0)
        globals()['crosshair_practice_decision3_duration'] = 2.0
        print(f"Crosshair ITI 3 duration: 2.0 seconds (fixed for practice)")
        print(f"  NOTE: Make sure crosshairPracticeDecision3 routine duration is set to 2.0 seconds in Builder")
      End Routine:
        # Hide crosshair when routine ends
        if 'text_crosshair_practice_decision3' in locals():
            text_crosshair_practice_decision3.setAutoDraw(False)
            text_crosshair_practice_decision3.opacity = 0

        # Clear any key presses
        try:
            event.clearEvents()
        except:
            pass
    TextComponent text_crosshair_practice_decision3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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
  Routine inBetween
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    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the first block.

        Press C to continue.
    KeyboardComponent key_resp_14
      allowedKeys = 'c', 'C'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine decisionPhase
  Routine decisionInstructions
  Routine whichFruit
  Routine practiceIntro2
  LoopInitiator practiceDecisionLoop loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine practiceDecisionSimulus1
    Routine crosshairPracticeDecision1
    Routine practiceDecisionSimulus2
    Routine crosshairPracticeDecision2
    Routine practiceDecisionMaking
    Routine crosshairPracticeDecision3
  LoopTerminator practiceDecisionLoop
  Routine taskStartSoonBlock3
  Routine scannerSyncBlock3
  Routine crosshair3Block3
  Routine scannerWaitBlock3
  Routine startTaskBlock3
  LoopInitiator decisionLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 0
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    Routine decisionStimulus1
    Routine decisionITI1
    Routine decisionStimulus2
    Routine decisionITI2
    Routine decisionMaking
    Routine decisionTimeout
    Routine decisionITI3
  LoopTerminator decisionLoop
  Routine inBetween
  Routine TaskStructure
  Routine yourGoal
  Routine keyInstructions
  Routine practiceIntro
  LoopInitiator practiceTrials loopType="TrialHandler"
    loopType = sequential
    nReps = 0
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    Routine practiceTrial
    Routine crosshair5
    Routine actualPoints1
    Routine crosshair3
  LoopTerminator practiceTrials
  Routine taskStartSoon
  Routine scannerSync
  Routine crosshair3
  Routine scannerWait
  Routine startTask
  LoopInitiator learningLoop loopType="TrialHandler"
    loopType = sequential
    nReps = 4
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    Routine trial
    Routine timeout
    Routine crosshair1
    Routine actualPoints
    Routine crosshair2
    Routine blockTransition
    Routine taskStartSoonBlock2
    Routine scannerSyncBlock2
    Routine crosshairBlock2
    Routine scannerWaitBlock2
    Routine crosshair2Block2
  LoopTerminator learningLoop
  Routine thankYou
